PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[1, 1, 1]
  Experiment info = {u'participant': u'9999', u'num_pract': u'20', u'age': u'1992-11-12', u'pic_eval': u'1', u'sample': u'1', u'run_all': u'0', u'g_conn': u'1', u'type': u'1', u'run_debug': u'0'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  Save log file = False
  expName = psreff3
  Screen = 1
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Routines
  Routine mat_ans
    ImageComponent image_4
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_matrix
      size = (1.5, 1.5)
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    PolygonComponent polygon_2
      opacity = 0.9
      fillColor = $[0,0,0]
      lineWidth = 10
      lineColor = $[0.2, 0.2, 0.2]
      startVal [time (s)] = 0.0
      size = (0.8, 1.6)
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    TextComponent text_51
      text = You have chosen:
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_52
      text [set every repeat] = $chosen_item
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    KeyboardComponent matrix_reeval
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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    TextComponent text_53
      wrapWidth = 0.6
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If this is true, press "y".
        If you want to choose again, press "n".
    CodeComponent code_20
      End Routine:
        if matrix_reeval.keys == 'n':
            run_correct = 1

        else:
            run_correct = 0 # dont need to run the second part

            if matrix_trial >= 3:
                responded_correctly, stor_matrix_ans = matrix_response(item_resp, correct_answer, stor_matrix_ans, curr_matrix)

               # we sort the keys which are the items according to order and take the last as this will be increasin
               # we transform the data structure in matrix_resp_parser and feed it into the trial evaluater
                tmp_evaluater.append(responded_correctly)

                # main stop rule
                mat_tr.finished = trial_evaluater(tmp_evaluater)

                # item 4
            if matrix_trial == 3 and not responded_correctly:
                already_switched = 1
                initiate_reverse = 1

                # item 5
            elif matrix_trial == 4 and not already_switched and not responded_correctly:
                already_switched = 1
                initiate_reverse = 1

            # this code is a bit chunky but turning it into a function makes this just more problematic

            if not turn_off: # this prevents from this whole thing getting evaluated unnecessarily
                reverse_corrected, stor_aux_ans, turn_off = reverse_correction(matrix_trial, indx, stor_aux_ans, responded_correctly, tmp)


            if matrix_trial >= 3:

                diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                                  "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                                  str(curr_matrix) + ", turn off: " + str(turn_off) + "\n" + \
                                  "response storage: " + str(tmp_evaluater)
            else:
                diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                                  "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                                  str(curr_matrix) + ", turn off: " + str(turn_off)

            matrix_trial += 1

            if curr_matrix == last_matrix:
                mat_tr.finished=True
    TextComponent diagnostics
      color = black
      text [set every repeat] = $diagnostics_info
      pos = (0.4, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine supl_jui
    CodeComponent code_13
      Begin Routine:
        pump_indx = current_pump
        # randomly takes one of the first three pumps
        # sends pump vol | the initial amount should be set at 1ml

        # fetch correct one from initial definition of pumps
        pump = pumps[pump_indx]


        #dev.write(pump)
        # after it sends, it should wait a bit
    TextComponent text_4
      color = black
      text [set every repeat] = $pump
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent jui_pic
      stopVal [duration (s)] = 1.5
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_juice
      size = (0.2, 0.35)
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  Routine jui_re
    CodeComponent code_26
      Begin Routine:
        juice_pics = ['stimuli//applejuice.png', 'stimuli//orangejuice.png', 'stimuli//pineapplejuice.png']

        random.shuffle(juice_pics)

        juice_1, juice_2, juice_3 = juice_pics
      End Routine:
        fav_juice = juice_reeval.keys
    KeyboardComponent juice_reeval
      forceEndRoutine = False
      allowedKeys = '1', '2', '3'
      startVal [time (s)] = 0.0
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    TextComponent text_42
      color = black
      text = Which if these juices was your favourite:
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_43
      color = black
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 3
      letterHeight = 0.1
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    ImageComponent image_11
      pos = (-0.4, -0.4)
      startVal [time (s)] = 0.0
      image [set every repeat] = $juice_1
      size = (0.2, 0.35)
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    ImageComponent image_12
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      image [set every repeat] = $juice_2
      size = (0.25, 0.25)
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    ImageComponent image_13
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      image [set every repeat] = $juice_3
      size = (0.25, 0.25)
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 3
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  Routine ev_jui
    KeyboardComponent juice_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6'
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        curr_q = current_question
      End Routine:
        juice_type = curr_juice.split('.').split('//')[1]

        tmp_dict[juice] = [juice_resp.keys, sav_mapping]
    TextComponent text_30
      wrapWidth = 0.8
      color = black
      text [set every repeat] = $current_question
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent first_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.8, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent second_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.5, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent third_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.2, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fourth_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.1, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fifth_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.4, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent sixth_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = (0.7, -0.6)
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    TextComponent text_31
      text = 1
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_32
      text = 2
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_33
      text = 3
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_34
      text = 4
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_35
      text = 5
      pos = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_22
      text = 6
      pos = [0.7, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine ev_feed
    CodeComponent code_7
      Begin Routine:
        # changes colors
        opt_1, opt_2, opt_3, opt_4, opt_5, opt_6 = color_change(ev_resp.keys, options)

        # selects correct part
        opt_1, opt_2, opt_3, opt_4, opt_5, opt_6 = opt_1[1], opt_2[1], opt_3[1], opt_4[1], opt_5[1], opt_6[1]

        stor_ev[str(sub_trial)] = [q_id, int(ev_resp.keys), ev_resp.rt]
      End Routine:
        # run_ev, run_effort, run_stroop
        #if type == 1:
        #    abs_trial += 1
        if type == 2:
            run_ev, run_flanker, run_effort, run_rew = 0, 1, 0, 0
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew = 0, 0, 1, 0
        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1


        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 0, 0, 1, 0
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1




        # for EV our data structure looks like this:
        # 'trial':[question_id, response, rt]


        sub_trial += 1
    PolygonComponent first_feedback
      fillColor [set every repeat] = $opt_1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent second_feedback
      fillColor [set every repeat] = $opt_2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent third_feedback
      fillColor [set every repeat] = $opt_3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fourth_feedback
      fillColor [set every repeat] = $opt_4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fifth_feedback
      fillColor [set every repeat] = $opt_5
      stopVal [duration (s)] = 0.5
      pos = [0.4, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent sixth_feedback
      fillColor [set every repeat] = $opt_6
      stopVal [duration (s)] = 0.5
      pos = (0.7, -0.6)
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    TextComponent text_17
      text = 1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_18
      text = 2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_19
      text = 3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_20
      text = 4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_21
      text = 5
      stopVal [duration (s)] = 0.5
      pos = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_46
      text = 6
      stopVal [duration (s)] = 0.5
      pos = [0.7,  -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine ev_save
    CodeComponent code_11
      Begin Routine:
        # we sort and order the keys because they correspond to the trials

        # saves to participant file
        save_to_file(dataset, curr_reward, stor_ev, abs_trial, stor_eff, stor_main, stor_gust, [4, 6])
  Routine nasa_tlx
    CodeComponent code_25
      Begin Routine:
        nasa_question = current_question
    TextComponent nasa_tlx_text
      color = black
      text [set every repeat] = $nasa_question
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating_3
      pos = 0, -0.6
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
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      customize_everything:
        size = 0.8,
        lineColor = 'black',
        stretch = 1.4,
        textColor = "black",
        labels = ["Very Low", "Very High"]
  Routine eff_press
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    ImageComponent image_9
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    ImageComponent image_10
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    TextComponent text_28
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    TextComponent text_62
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    TextComponent text_63
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
  Routine prac_ann
    TextComponent text_8
      wrapWidth = 0.8
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        First a series of practice trials
        will follow to familiarise you with this game!
    TextComponent text_10
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine eff_feed
    TextComponent text_11
      text = Effort task placeholder
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_9
      Begin Routine:
        # let's say we store participant data here.
        # cur_contr - we would get this information back from the dynamometer
        # mvc - denotes the maximal values we would get back from the dynamometer

        curr_contr_perc = int((curr_contr - mvc)/100)*100

        if curr_contr_perc >= 80:
            rew_multpl = 1.2
        elif 50 <= curr_contr_perc <= 79:
            rew_multpl = 1
        elif 25 <= curr_contr_perc <= 50:
            rew_multpl = 0.8
      End Routine:
        # save data on a per trial basis
        stor_eff[str(abs_trial)] = [curr_contr, rew_multpl]


        # run_ev, run_effort, run_stroop
        if type == 2:
            run_ev, run_flanker, run_effort, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        elif type == 3:
            run_prac = 0 # this needs to be here in order to prevent
                         # it from popping up unnecessarily
            run_effort, run_ev, run_flanker, run_rew = 0, 1, 0, 0
        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew = 0, 1, 0, 0
        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 0, 0, 1, 0

        # here we would get the response from an individual in terms of
        # the exerted effort. the question is now if this will be
        # dynamic or just a static value in the end

        # we will make it such that the data on the ev will be automatically repeated
        # the good thing about that is that it will be very easy to analyse in both python and r

        save_to_file(dataset, curr_reward, stor_ev, abs_trial, stor_eff, stor_main, stor_gust, [2, 5])
  Routine mat_re
    ImageComponent image_5
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_matrix
      size = (1.5, 1.5)
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    KeyboardComponent item_resp_again
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5'
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      End Routine:
        # check for response

        if matrix_trial >= 3:
            responded_correctly, stor_matrix_ans = matrix_response(item_resp_again, correct_answer, stor_matrix_ans, curr_matrix)

            tmp_evaluater.append(responded_correctly)

            mat_tr.finished = trial_evaluater(tmp_evaluater)

        if not turn_off: # this prevents from this whole thing getting evaluated unnecessarily
            reverse_corrected, stor_aux_ans, turn_off = reverse_correction(matrix_trial, indx, stor_aux_ans, responded_correctly, tmp)


            # item 4
        if matrix_trial == 3 and not responded_correctly:
            already_switched = 1
            initiate_reverse = 1

        elif matrix_trial == 4 and not already_switched and not responded_correctly:
            already_switched = 1
            initiate_reverse = 1

        run_correct = 0

        if curr_matrix == last_matrix:
            mat_tr.finished=True

        if matrix_trial >= 3:

            diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                              "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                              str(curr_matrix) + ", turn off: " + str(turn_off) + "\n" + \
                              "response storage: " + str(tmp_evaluater)
        else:
            diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                              "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                              str(curr_matrix) + ", turn off: " + str(turn_off)

        matrix_trial += 1
    TextComponent diagnostics_2
      color = black
      text [set every repeat] = $diagnostics_info
      pos = (0.4, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine instr1
    KeyboardComponent instr1_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Experiment:
        import random, os, serial, time, collections
        from datetime import datetime
        from datetime import date
        from dateutil import relativedelta
        from copy import deepcopy

        ################################################
        ########### defining basic variables ###########
        ################################################

        # absolute trial counter; including practice trials
        abs_trial = 1
        # trial for values in evaluation
        sub_trial = 1
        # current trial within the matrix sequence
        matrix_trial = 1


        # used to run either practice or real trials
        run_prac = 1
        run_real = 0
        run_juice_reeval = 0
        # run matrix reevaluation or not
        run_correct = 0
        #current row that is being pulled for the image in the matrix trial
        run_matrix = 0

        # helper variable used in the matrix evaluation procedure
        already_switched = 0
        # was the reverse correcetd (e.g. by 1 1)
        reverse_corrected = 0
        # initiate reverse sequence in WASI?
        initiate_reverse = 0
        # was the response correct or not in the matrix case
        responded_correctly = 0
        # indexing the item
        indx = 0
        # diagnostics string
        diagnostics_info = ''

        ################################################
        ######## generic helpre variables ##############
        ################################################

        # generic helper variable
        tmp = 0
        # generic helper list
        tmp_list = []
        # generic helper dict
        tmp_dict = {}
        # generic helper variables
        struct_1 = ''
        struct_2 = ''
        # tmp trial is used as a helper counter in various places
        tmp_trial = 1

        # key used for obtaining the final response from the participants
        response = ''

        # last matrix
        last_matrix = 'stimuli/Item30-1.png'

        # to not check for reverse correction every time
        turn_off = 0

        ################################################
        ########### creating containers ################
        ################################################

        # storage containers
        stor_ev = {}
        stor_eff = {}
        stor_main = {}
        pump_vol = {} # this gives us a clear mapping between volume and commands to send
        stor_gust = {}
        stor_init_q = []
        stor_pic_q = []
        stor_jui_eval = collections.defaultdict()
        stor_matrix_ans = {}
        stor_aux_ans = []
        # list used for evaluating matrix reasoning correctness
        tmp_evaluater = []

        ################################################
        ########### Matrix reasoning containers ########
        ################################################

        # t score containers
        t_1 = [20, 22, 23, 25, 27, 29, 31, 33, 34, 36, 38, 40, 42, 44, 46, 48, 51, 53, 55, 57, 59, 62, 65, 68, 72, 76, 79, 80, 80, 80, 80]
        t_2 = [20, 21, 22, 24, 26, 28, 30, 32, 33, 35, 37, 39, 41, 43, 45, 47, 50, 52, 54, 56, 58, 61, 64, 67, 71, 75, 78, 80, 80, 80, 80]
        t_3 = [20, 21, 22, 24, 26, 28, 30, 32, 33, 35, 37, 39, 40, 42, 45, 46, 49, 51, 53, 55, 57, 60, 63, 66, 70, 74, 78, 80, 80, 80, 80]
        t_4 = [20, 20, 21, 23, 25, 27, 29, 31, 32, 34, 36, 38, 40, 42, 44, 46, 49, 51, 53, 55, 57, 60, 63, 66, 70, 74, 77, 80, 80, 80, 80]
        t_5 = [20, 20, 21, 23, 25, 27, 29, 31, 32, 34, 36, 38, 40, 42, 44, 46, 48, 50, 52, 54, 56, 59, 62, 65, 69, 73, 77, 80, 80, 80, 80]
        t_6 = [20, 20, 21, 23, 25, 27, 29, 30, 32, 33, 35, 37, 39, 41, 43, 45, 47, 49, 52, 54, 56, 58, 61, 65, 69, 73, 77, 80, 80, 80, 80]
        t_7 = [20, 20, 21, 23, 24, 26, 28, 30, 31, 33, 35, 37, 39, 41, 43, 45, 47, 49, 51, 53, 55, 58, 61, 64, 68, 72, 76, 79, 80, 80, 80]
        t_8 = [20, 20, 21, 23, 24, 26, 28, 29, 31, 32, 34, 36, 38, 40, 42, 44, 46, 48, 51, 53, 55, 57, 60, 64, 68, 72, 76, 79, 80, 80, 80]
        t_9 = [20, 20, 21, 23, 24, 26, 27, 29, 30, 32, 34, 36, 38, 40, 42, 43, 45, 47, 50, 52, 54, 56, 59, 63, 67, 71, 75, 78, 80, 80, 80]
        t_10 = [20, 20, 20, 22, 23, 25, 27, 28, 30, 31, 33, 35, 37, 39, 41, 43, 45, 47, 50, 52, 54, 56, 59, 63, 67, 71, 75, 78, 80, 80, 80]

        t_11 = [20, 20, 20, 20, 20, 21, 22, 24, 25, 27, 28, 30, 32, 34, 36, 38, 40, 42, 44, 46, 49, 51, 53, 55, 58, 62, 68, 73, 76, 79, 80]
        t_12 = [20, 20, 20, 20, 20, 21, 22, 24, 25, 27, 28, 30, 32, 34, 36, 38, 40, 42, 44, 46, 48, 50, 52, 54, 57, 61, 66, 71, 75, 78, 80]
        t_13 = [20, 20, 20, 20, 20, 21, 22, 24, 25, 27, 28, 30, 32, 34, 36, 38, 40, 42, 44, 46, 48, 50, 52, 54, 57, 60, 64, 69, 73, 77, 80]

        age_adults = ['17-19', '20-24', '25-29']

        age_children = ['9:0-9:3', '9:4-9:7', '9:8-9:11', '10:0-10:3', '10:4-10:7', \
                        '10:8-10:11', '11:0-11:3', '11:4-11:7', '11:8-11:11', '12:0-12:3']


        matrix_reason = {}
        matrix_reason['adult'] = {}
        matrix_reason['child'] = {}

        matrix_reason['adult']['17-19'] = {}
        matrix_reason['adult']['20-24'] = {}
        matrix_reason['adult']['25-29'] = {}
        matrix_reason['child']['9:0-9:3'] = {}
        matrix_reason['child']['9:4-9:7'] = {}
        matrix_reason['child']['9:8-9:11'] = {}
        matrix_reason['child']['10:0-10:3'] = {}
        matrix_reason['child']['10:4-10:7'] = {}
        matrix_reason['child']['10:8-10:11'] = {}
        matrix_reason['child']['11:0-11:3'] = {}
        matrix_reason['child']['11:4-11:7'] = {}
        matrix_reason['child']['11:8-11:11'] = {}
        matrix_reason['child']['12:0-12:3'] = {}



        for i in range(1, 31):
            str_i = str(i)
            matrix_reason['adult']['17-19'][str_i] = t_11[i]
            matrix_reason['adult']['20-24'][str_i]  = t_12[i]
            matrix_reason['adult']['25-29'][str_i]  = t_13[i]
            matrix_reason['child']['9:0-9:3'][str_i]  = t_1[i]
            matrix_reason['child']['9:4-9:7'][str_i]  = t_2[i]
            matrix_reason['child']['9:8-9:11'][str_i]  = t_3[i]
            matrix_reason['child']['10:0-10:3'][str_i]  = t_4[i]
            matrix_reason['child']['10:4-10:7'][str_i]  = t_5[i]
            matrix_reason['child']['10:8-10:11'][str_i]  = t_6[i]
            matrix_reason['child']['11:0-11:3'][str_i]  = t_7[i]
            matrix_reason['child']['11:4-11:7'][str_i]  = t_8[i]
            matrix_reason['child']['11:8-11:11'][str_i]  = t_9[i]
            matrix_reason['child']['12:0-12:3'][str_i]  = t_10[i]


        stim_corr_ans = [2, 3, 2, 1, 3, 1, 5, 1, 3, 3, 4, 2, 3, 4, 1, 4, \
                         2, 5, 4, 2, 4, 2, 3, 3, 1, 4, 4, 2, 5, 5, 1, 2]

        # generate a second stimuli list
        stim_list = ['stimuli/Sample Item A-1.png', 'stimuli/Sample Item B-1.png']
        for i in range(1, 31):
            if i < 10:
                stim_file = 'stimuli/Item0' + str(i) + '-1.png'
            else:
                stim_file = 'stimuli/Item' + str(i) + '-1.png'
            stim_list.append(stim_file)


        # this is important for the saving portion

        # generate empty list with all responses
        tmp_list = 30*[None]

        # populate with 0s
        for i in range(0, 30):
            if i < 5:
                tmp_list[i] = 1 # this is a very elegant assumption that saves a lot of loops
            else:
                tmp_list[i] = 0



        ################################################
        ########### pump related information ###########
        ################################################

        # clear mapping to make sure we know how much to send

        pump_selecter = ['\13', '\14', '\15', '\16']
        pumps = ['\1', '\2', '\3', '\4']

        ctr = 1
        pump_vol = {}
        stringed_ctr = str(ctr)
        for vol in range(100, 4100, 100):
            while stringed_ctr[-1] == '8' or stringed_ctr[-1] == '9':
                ctr += 1
                stringed_ctr = str(ctr)
            else:
                pump_vol[str(vol)] = ctr
                ctr += 1
                stringed_ctr = str(ctr)


        # add nice background
        background_image = visual.ImageStim(win=win, image = 'background_f.png')

        # response options
        left_resp = 'f'
        right_resp = 'k'

        # this works but make it nicer so it adds up files together in a nicer way
        def check_file(filename, cwd, ctr):
            for file in os.listdir(cwd):
                if file.endswith('.txt'):
                    if file != filename: # if a file doesnt exist just return the fname
                        return filename
                    else:
                        tmp = file.split('_')
                        tmp[1] = tmp[1] + '_' + str(ctr) # our new sub_id is now id_ctr
                        ctr += 1 # increment for recursivity
                        filename = '_'.join(tmp) # rename the file
                        check_file(filename, cwd, ctr)


        ################################################
        ########### effort #############################
        ################################################

        mvc = 95

        curr_contr = 0
        rew_multpl = 0

        ################################################
        ########### flanker ############################
        ################################################

        obtained_rew = 0

        base_rew = 0.10
        # flanker difficulty
        diff_lev = ['low', 'high']

        # cue timing denotes how long the flanker cues are presented
        cue_time = 0.3

        # resp window denotes the length of the response window
        resp_wind = 0.5

        vol = 1

        juice_rew = 'juice.png'
        pound_rew = 'pound.png'


        ###################################################
        ########## initial state determination ############
        ###################################################

        # variable for initial questions that determine a participants state
        initial_q = ''
        # type of sequence failure in case an individual failed the first matrix reasoning trials
        failed_seq = 0


        ################################################
        ################# juice evaluation #############
        ################################################

        juice_trial = 1
        run_dispenser = 1
        pump = ''
        tmp_val = 0
        # we preconfigure our container to be a list for each pump
        for el in pumps:
            jui = str(int(el.encode('hex'), 16))
            stor_jui_eval[jui] = []


        ############################################################
        ################### helper functions #######################
        ############################################################

        def save_to_file(dataset, curr_reward, stor_ev, abs_trial, stor_eff, stor_main, stor_gust, types):
            trial_l = sorted([int(el) for el in stor_ev.keys()])
            str_abs_t = str(abs_trial)

            # we make types a list that denotes which of the 6 potential conditions it will be
            if type == types[0] or type == types[1]:

                for t in trial_l:
                    str_t = str(t)
                    dataset.write("{}\t{}\t{}\t{}\t{}\t{}\t{}\t{} \
                                {}\t{}\t{}\t{}\t{}\t{}\t{}\n".format(str_abs_t,                # abs_trial
                                                                     curr_reward,          # current reward type
                                                                     stor_ev[str_t][0],    # question
                                                                     stor_ev[str_t][1],     # response
                                                                     stor_ev[str_t][2],  # reaction time
                                                                     stor_eff[str_abs_t][0],     # trial contraction
                                                                     stor_eff[str_abs_t][1],     # reward multiplier | actual reward to be paid
                                                                     stor_main[str_abs_t][0],  # first stim
                                                                     stor_main[str_abs_t][1],  # go or no go
                                                                     stor_main[str_abs_t][2],  # response
                                                                     stor_main[str_abs_t][3],  # response rt
                                                                     stor_main[str_abs_t][4],  # reward
                                                                     stor_gust[str_abs_t][0],  # pump
                                                                     stor_gust[str_abs_t][1],  # times pumped
                                                                     stor_gust[str_abs_t][2]))  # amount


        def set_matrix(indx, stim_list, stim_corr_ans):
            return [stim_list[indx], stim_corr_ans[indx]]

        options = [(1, [0.2, 0.2, 0.2]), \
                   (2, [0.2, 0.2, 0.2]), \
                   (3, [0.2, 0.2, 0.2]), \
                   (4, [0.2, 0.2, 0.2]), \
                   (5, [0.2, 0.2, 0.2]), \
                   (6, [0.2, 0.2, 0.2])]


        def color_change(picked_opt, options):
            copy_options = deepcopy(options) # this way we preserve the original
            ch_option = [1, 0.84, 0.0]
            unch_col = [0.2, 0.2, 0.2]

            for indx, option in enumerate(options):
                if str(option[0]) == picked_opt:
                    tmp = list(options[indx]) # hack to remove issues with deleting
                    del tmp[1]
                    tmp.append(ch_option)
                    copy_options[indx] = tuple(tmp)
            else:
                copy_options[indx] = tuple([indx+1, unch_col])
            return copy_options

        def matrix_response(answer, correct_answer, container, curr_matrix):
            responded_correctly = answer.keys == str(correct_answer)

            curr_matrix = curr_matrix.split('-')[0][-2:] # fetches the string of the item

            if responded_correctly:
                container[curr_matrix] = 1
            else:
                container[curr_matrix] = 0

            return [responded_correctly, container]

        def trial_evaluater(container):
            if sum(container[-3:]) == 0 and len(container) >= 6: # maybe change this but this assumes noone will have less
                return 1                                          # than the first 10 incorrect



        def reverse_correction(matrix_trial, indx, aux_container, response, tmp):

            # these act as default values for the variables
            reverse_corrected = 0
            turn_off = 0
            if (matrix_trial == 4 and indx == 4) or (matrix_trial == 5 and indx == 4):
                tmp = 1
            elif (matrix_trial == 5 and indx == 3) or (matrix_trial == 6 and indx == 3):
                tmp = 2
            if tmp == 1 or tmp == 2:
                aux_container.append(response)

            if tmp == 2:
                if sum(stor_aux_ans) == 2:
                    reverse_corrected = 1
                    turn_off = 1

            return [reverse_corrected, aux_container, turn_off]

        # deprecated

        def matrix_resp_parser(container):
            tmp_it = [int(el) for el in container.keys()]
            tmp_it.sort()
            tmp_it = tmp_it[-1]

            if tmp_it < 10:
                tmp_it = '0' + str(tmp_it)
            else:
                tmp_it = str(tmp_it)

            return container[tmp_it]


        def set_filename(part_char, addon):

            fname = part_char[0] + '_' + part_char[1] + '_' + part_char[2] + '_' + part_char[3] + '_' + addon + '.txt'

            ctr = 0 # recursively checks if the file already exists, if it doesn't it stops
            fname = check_file(fname, part_char[4], ctr)

            complete = part_char[4] + "\\data\\" + fname

            return complete
      Begin Routine:
        # type leads to 6 different potential variants of this task.
        type = int(expInfo['type'])

        # just for debugging purposes
        run_debug = int(expInfo['run_debug'])
        run_all = int(expInfo['run_all'])
        run_nasa = 1

        run_ev, run_effort, run_stroop, run_rew = 1, 1, 1, 1

        # run_ev, run_effort, run_stroop, run_rew
        # here run_rew can be defined as 1 in all conditions
        # because it will be changed during the task flow


        if type == 1:
            run_ev, run_effort, run_flanker, run_rew = 1, 1, 1, 1
        elif type == 2:
            run_ev, run_flanker, run_effort, run_rew = 1, 0, 0, 1
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew  = 1, 0, 0, 1
        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew  = 1, 0, 0, 1
        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew  = 1, 0, 0, 1
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew  = 1, 0, 0, 1

        # open datafile in the beginning
        exp_name = str(expName)
        sub_id = str(expInfo['participant'])
        dat = str(expInfo['date'])


        # compute age to know which t-scores to look
        part_age = str(expInfo['age'])
        participant_type = int(expInfo['sample'])


        part_age = [int(el) for el in part_age.split('-')]
        part_age = datetime(part_age[0], part_age[1], part_age[2])

        today = [int(el) for el in str(date.today()).split('-')]
        today = datetime(today[0], today[1], today[2])

        diff = relativedelta.relativedelta(today, part_age)
        part_year = diff.years
        part_month = diff.months

        # function that finds the correct age bracket
        def find_age_bracket(part_year, part_month, age_list, part_type):
            corr_brack = ''
            for bracket in age_list:
                if part_type == 2:
                    split_bracket = bracket.split('-')
                    lb, ub = split_bracket[0].split(':'), split_bracket[1].split(':') # split into upper and lower
                    lyr, lmth, uyr, umth = int(lb[0]), int(lb[1]), int(ub[0]), int(ub[1]) # index years - 0, and months - 1
                else:
                    bound = bracket.split('-')
                    lyr, uyr = int(bound[0]), int(bound[1]) # split into upper and lower
                if part_type == 2:
                    try:
                        if (lyr <= part_year <= uyr) and (lmth <= part_month <= umth):
                            corr_brack = bracket # this means the participant falls into this bracket
                            break
                    except:
                        pass
                else:
                    try:
                        if (lyr <= part_year <= uyr):
                            corr_brack = bracket
                            break
                    except:
                        pass
            if corr_brack == '':
                print('The subject is either too old or too young')
            return corr_brack

        if participant_type == 1:
            participant_age = find_age_bracket(part_year, part_month, age_adults, participant_type)
            participant_type = 'adult' # rename for dict purposes
        else:
            participant_age = find_age_bracket(part_year, part_month, age_children, participant_type)
            participant_type = 'child'

        # number of practice trials | default is 20
        num_pract = int(expInfo['num_pract'])


        out_type = str(type) # we do this to avoid issues with reconverting type over and over


        pic_eval = int(expInfo['pic_eval'])

        if pic_eval == 1:
            run_pic_eval_b = 1
            run_pic_eval_e = 0
        else:
            run_pic_eval_b = 0
            run_pic_eval_e = 1


        # get current working directory
        cwd = os.getcwd()

        part_char = [exp_name, sub_id, out_type, dat, cwd]

        # filename
        complete = set_filename(part_char, 'main')

        # open a text file
        dataset = open(complete, 'w')

        # in the first row we save header columns | add the others later

        dataset.write('trial\tcurr_rew\tquestion\tresponse\tresp_rt\ttrial_conc\trew_mult\tmain_st\tgng\tresp_m\tresp_m_rt\trew_m\tpump\tpump_tim\tpump_vol\n')

        # connection is set at 1 as default, meaning we want to connect gustaf
        gust_connected = int(expInfo['g_conn'])

        gust_connected = 0

        # if we want to connect the gustatory device
        if gust_connected == 1:

            # set up gustaf connection

            timeout = 0
            params = {
                'timeout'  : timeout,
                'baudrate' : 19200,
                'bytesize' : serial.EIGHTBITS,
                'parity'   : serial.PARITY_NONE,
                'stopbits' : serial.STOPBITS_ONE,
            }

            dev = serial.Serial('COM3', **params)

            # Keep in mind there should be at least a 10ms difference
            # between changing amount of juice and the actual squirting
            # sequence itself.

            # safety feature to make sure port is open
            if(dev.isOpen() == False):
                dev.open()
    TextComponent text_7
      color = black
      text = Instructions placeholder
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_9
      color = black
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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  Routine rew_ann
    CodeComponent code
      Begin Routine:
        if reward_type == 1:
            curr_reward = juice_rew
        else:
            curr_reward = pound_rew
      End Routine:
        # run_ev, run_effort, run_flanker
        if type == 2:
            run_ev, run_flanker, run_effort, run_rew = 1, 0, 0, 0
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew = 1, 0, 0, 0
            abs_trial += 1
        elif type == 4:
            abs_trial += 1
            run_effort, run_flanker, run_ev, run_rew = 1, 1, 0, 0
        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 1, 0, 0, 0
            abs_trial += 1
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 1, 0, 0, 0
            abs_trial += 1
    TextComponent text_2
      text = Now, you will play for:
      stopVal [duration (s)] = 3
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 3
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_reward
      size = (1, 1)
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  Routine cog_eff_fin_answ
  Routine test
    CodeComponent code_22
      Begin Routine:
        background_image.setAutoDraw(True)
    TextComponent text_50
      text [set every repeat] = $matrix_trial
      stopVal [duration (s)] = 2
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_64
      text [set every repeat] = $stor_matrix_ans
      stopVal [duration (s)] = 2
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_65
      text = $stim_corr_ans
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_73
      color = black
      text = Now we move to the next part of our experiment. 
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine jui_fe
    CodeComponent code_12
      Begin Routine:
        # changes colors
        opt_1, opt_2, opt_3, opt_4, opt_5, opt_6 = color_change(juice_resp.keys, options)

        # selects correct part
        opt_1, opt_2, opt_3, opt_4, opt_5, opt_6 = opt_1[1], opt_2[1], opt_3[1], opt_4[1], opt_5[1], opt_6[1]

        # current pump
        #jui = str(int(pump.encode('hex'), 16))[-1]
        stor_jui_eval[juice].append(int(juice_resp.keys))

        if juice_trial == 1:
            run_dispenser = 0
            # water
      End Routine:
        act_vol = int(pump.encode('hex'), 16)
    PolygonComponent first_feedback_2
      fillColor [set every repeat] = $opt_1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent second_feedback_2
      fillColor [set every repeat] = $opt_2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent third_feedback_2
      fillColor [set every repeat] = $opt_3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fourth_feedback_2
      fillColor [set every repeat] = $opt_4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fifth_feedback_2
      fillColor [set every repeat] = $opt_5
      stopVal [duration (s)] = 0.5
      pos = [0.4, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent sixth_feedback_2
      fillColor [set every repeat] = $opt_6
      stopVal [duration (s)] = 0.5
      pos = (0.7, -0.6)
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    TextComponent text_36
      text = 1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_37
      text = 2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_38
      text = 3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_39
      text = 4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_40
      text = 5
      stopVal [duration (s)] = 0.5
      pos [set every frame] = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_25
      text = 6
      stopVal [duration (s)] = 0.5
      pos = (0.7, -0.58)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine tar_ann
    ImageComponent main_image
      stopVal [duration (s)] = $resp_wind
      startVal [time (s)] = 0.0
      image [set every repeat] = $main_cue
      size = (0.8, 0.3)
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    KeyboardComponent main_resp
      stopVal [duration (s)] = $resp_wind+resp_fin
      forceEndRoutine = True
      allowedKeys = 'f', 'k'
      startVal [time (s)] = $resp_wind
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  Routine ev_pic
    CodeComponent code_17
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        pic_q = current_question

        # this is added because by having an id of the question
        # where the questions are randomised, we can simply store it
        # later
        tmp_list.append(sav_mapping)
      End Routine:
        stor_pic_q.append(rating_2.getRating())

        tmp_trial += 1

        if tmp_trial == 7: # end of questions about pictures

            complete = set_filename(part_char, 'pic_q(pic_rating.csv)')
            pic_q_data = open(complete, 'w')

            for el in tmp_list:
                struct_1 += "pic" + str(el) + "\t"

            struct_1 += "sub_id\n"  #subid

            pic_q_data.write(struct_1)


            for i in range(0, len(stor_pic_q)):
                struct_2 += "{}\t"

            struct_2 += "{}\n"

            tmp_list = stor_pic_q
            tmp_list.append(part_char[1])

            pic_q_data.write(struct_2.format(tmp_list[0], tmp_list[1], tmp_list[2], tmp_list[3],
                                             tmp_list[4], tmp_list[5], tmp_list[6]))
            pic_q_data.close()

            struct_1 = ''
            struct_2 = ''
            tmp_list = []
    RatingScaleComponent rating_2
      pos = [0, -0.8]
      high = 7
      startVal [time (s)] = 0.0
      size = 0.8
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
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      customize_everything:
        size = 0.8,
        lineColor = 'black',
        stretch = 1.4,
        textColor = "black",
        labels = ["not at all", "extremely"]
    ImageComponent image_2
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      image [set every repeat] = $pic_q
      size = (0.8, 0.3)
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    TextComponent text_49
      color = black
      text = How much do you like this picture?
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine matrix_eval_beg
    CodeComponent code_23
      Begin Routine:
        current_matrx = item
        correct_answer = corr_answ
      End Routine:
        chosen_item = init_response.keys
    ImageComponent image_6
      startVal [time (s)] = 0.0
      image [set every repeat] = $item
      size = (1.5, 1.5)
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    KeyboardComponent init_response
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5',
      startVal [time (s)] = 0.0
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    TextComponent text_56
      wrapWidth = 1.4
      color = black
      text = Look at this picture. 
      stopVal [time (s)] = 3
      pos = (0, 0.85)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent text_60
      color = black
      text = Which one here
      stopVal [time (s)] = 6.15
      pos = (0, -0.85)
      startVal [time (s)] = 3.15
      letterHeight = 0.1
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    PolygonComponent polygon_3
      fillColor = None
      stopVal [time (s)] = 6.15
      pos = (0, -0.5)
      lineWidth = 10
      lineColor = $[-1, -1, -1]
      startVal [time (s)] = 3.15
      size = (1.3, 0.55)
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    TextComponent text_61
      color = black
      text = Goes here
      stopVal [time (s)] = 9.3
      pos = (0.15, 0)
      startVal [time (s)] = 6.3
      letterHeight = 0.1
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    PolygonComponent polygon_4
      opacity = 0
      fillColor = $[1, 1, 1]
      stopVal [time (s)] = 9.3
      pos = (0.3, 0.6)
      lineWidth = 10
      lineColor = $[-1, -1, -1]
      startVal [time (s)] = 6.3
      size = (0.5, 0.5)
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  Routine iniq_feed
    CodeComponent code_16
      Begin Routine:
        if ev_resp.keys == '1':
            opt_1 = [1, 0.84, 0.0]
            opt_2, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '2':
            opt_2 = [1, 0.84, 0.0]
            opt_1, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '3':
            opt_3 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '4':
            opt_4 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '5':
            opt_5 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_4 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]


        stor_ev[str(sub_trial)] = [q_id, int(ev_resp.keys), ev_resp.rt]
      End Routine:
        # run_ev, run_effort, run_stroop
        #if type == 1:
        #    abs_trial += 1
        if type == 2:
            run_ev, run_flanker, run_effort, run_rew = 0, 1, 0, 0
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew = 0, 0, 1, 0
        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew = 0, 0, 0, 1

            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1


        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 0, 0, 1, 0
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 0, 0, 0, 1

            run_prac = 0

            if abs_trial == num_pract:
                run_real = 1




        # for EV our data structure looks like this:
        # 'trial':[question_id, response, rt]


        sub_trial += 1
    TextComponent text_57
      text = 3
      stopVal [duration (s)] = 1.0
      pos = [0.0, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_58
      text = 4
      stopVal [duration (s)] = 1.0
      pos = [0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_59
      text = 5
      stopVal [duration (s)] = 1.0
      pos = [0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine comp
    CodeComponent code_6
      Begin Routine:
        if  main_resp.keys == left_resp:
            part_resp = 1 # left
        elif main_resp.keys == right_resp:
            part_resp = 2 # right
        else: # no go trial
            part_resp = 3

        # make sure this is correct
        # if participant does respond and was suppose to respond and responds correctly
        if part_resp == 1 and correct_response == 1 or \
            part_resp == 2 and correct_response == 2:
            computed_resp = 1 # hit

        # if participant does respond and was supposed to respond and responds incorrectly
        elif part_resp == 1 and correct_response == 2 or \
            part_resp == 2 and correct_response == 1:
            computed_resp = 2 # incorrect response due to pressing incorrect key

        # if participant does respond and was not supposed to respond
        elif (part_resp == 1 or part_resp == 2) and correct_response == 3:
            computed_resp = 3 # false alarm

        # if participant does not respond and was not supposed to respond
        elif part_resp == 3 and correct_response == 3:
            computed_resp = 0 # correct rejection

        # if participant does not respond and was supposed to respond
        elif part_resp == 3 and correct_response != 3:
            computed_resp = 4 # miss

        # remove this later
        act_pump, act_pump_nr, act_vol = 0, 0, 0
      End Routine:
        if gust_connected == 1:
            if current_rew == juice_rew and \
               computed_resp == 1 or computed_resp == 0:

                dev.write('\13')
                amount = str(int(pump_vol['2500']) * rew_multpl) # this needs to be changed obvs.
                dev.write(amount)

                dev.write('\1') # send juice squirt
                gus_fed = dev.readlines()

                obtained_rew = str(amount) + 'units of juice'

            elif current_rew == pound_rew and \
                computed_resp == 1 or computed_resp == 0:
                    obtained_rew = str(base_rew*rew_multpl) + 'pence'
            elif computed_resp == 2 or \
                 computed_resp == 3 or \
                 computed_resp == 4:
                    vol = 0
                    obtained_rew = 'nothing'

            if current_rew == juice_rew:
                # we parse the feedback - we can convert from hexadecimal here
                gus_fed = gus_fed[0]
                if len(gus_fed) == 3: # we know that if the length is 3 then it sent extra information
                    act_pump = gus_fed[0] # because the default setting is to send information on 1ml
                    act_pump_nr = gus_fed[1]
                    act_vol = int(gustaf_feedback[2].encode('hex'), 16)*1000
                else:
                    act_pump = gus_fed[0]
                    act_pump_nr = gus_fed[1]
                    act_vol = 1000
            else:
                act_pump, act_pump_nr, act_vol = 0, 0, 0


        # save data on a per trial basis
        str_abs_t = str(abs_trial)

        stor_main[str_abs_t] = [cue, cond, computed_resp, main_resp.rt, obtained_rew]
        stor_gust[str_abs_t] = [act_pump, act_pump_nr, act_vol]


        save_to_file(dataset, curr_reward, stor_ev, abs_trial, stor_eff, stor_main, stor_gust, [1, 3])

        # run_ev, run_effort, run_flanker
        if type == 1:
            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        if type == 2:
            run_ev, run_effort, run_flanker, run_rew = 0, 1, 0, 0
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew = 0, 0, 1, 0
        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 0, 1, 0, 0
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 0, 1, 0, 0
  Routine est_sal
    TextComponent text_24
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will now get to try a number of juices. After you obtain each juice, we would like you to rate them. We will take your answers into account so you will be playing for your favourite juice!
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = black
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine short_feed
    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.5, 0.5)
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  Routine jui_out
    CodeComponent code_8
      Begin Routine:
        summed = []
        for key, values in zip(stor_jui_eval.keys(), stor_jui_eval.values()):
            tmp_val = 0
            for value in values:
                tmp_val += value
            summed.append((key, tmp_val/3)) # we get the mean because we ask them 3 questions

        # picks the max and if there's more than one it picks one randomly
        # we then later ask to reconfirm their favourite juice
        fav_juice = max(summed, key=lambda item:item[1])[0] # take the first element
      End Routine:
        if juice_conf.keys == 'y':
            run_juice_reeval = 0
        else:
            run_juice_reeval = 1
    TextComponent text_41
      color = black
      text = Your favourite juice was:
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent juice_conf
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 1
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    TextComponent text_70
      color = black
      text = Please confirm by pressing "y" if this is correct or "n" if you want to choose another one.
      startVal [time (s)] = 1
      letterHeight = 0.1
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    ImageComponent image_14
      startVal [time (s)] = 0.0
      image [set every repeat] = $fav_juice
      size = (0.5, 0.5)
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  Routine ev_iniq
    CodeComponent code_14
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        initial_q = current_question

        # this is added because by having an id of the question
        # where the questions are randomised, we can simply store it
        # later
        tmp_list.append(sav_mapping)
      End Routine:
        tmp_trial += 1

        stor_init_q.append(rating.getRating())

        if tmp_trial == 4:

            complete = set_filename(part_char, 'initial_q(initial_q.csv)')
            init_q_data = open(complete, 'w')

            for el in tmp_list:
                struct_1 += "quest" + str(el) + "\t"

            struct_1 += "sub_id\n"  #subid

            init_q_data.write(struct_1)

            for i in range(0, len(stor_init_q)):
                struct_2 += "{}\t"

            struct_2 += "{}\n"

            tmp_list = stor_init_q
            tmp_list.append(part_char[1])

            init_q_data.write(struct_2.format(tmp_list[0], tmp_list[1], tmp_list[2], tmp_list[3]))
            init_q_data.close()

            # clear variables
            struct_1 = ''
            struct_2 = ''
            tmp_list = []
            tmp_trial = 1
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 100
      startVal [time (s)] = 0.0
      size = 1.6
      storeRatingTime = False
      forceEndRoutine = True
      low = 0
      visualAnalogScale = True
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      customize_everything:
        size = 0.8,
        lineColor = 'black',
        stretch = 1.4,
        textColor = "black",
        labels = ["Not at all", "Extremely"]
    TextComponent text_44
      color = black
      text [set every repeat] = $initial_q
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine eff_prom
    TextComponent text_23
      text = Now comes the squeeze game!
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine final_screen
    TextComponent text_48
      color = black
      text = That was all, you are done! Thank you for your participation :)
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine beg_fix
    CodeComponent code_5
      Begin Routine:
        curr_t = min(2.5, max(0.5, random.gauss(2, 0.1)))
        main_cue = cue
        curr_diff_lev = diff_lev[0]

        if curr_diff_lev == 'low':
            cue_timing = 0.4
            resp_wind = 0.6
            feed_sound = 'lowest.wav'
        elif curr_diff_lev == 'high':
            cue_timing = 0.2
            resp_wind =  0.4
            feed_sound = 'highest.wav'
        else:
            cue_timing = 0.3
            resp_wind = 0.5
            feed_sound = 'medium.wav'

        resp_fin = 5
    TextComponent text
      text = This round:
      stopVal [duration (s)] = $curr_t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    ImageComponent image_7
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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  Routine tar_feed
    TextComponent text_3
      text = You have obtained
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_6
      text [set every repeat] = $obtained_rew
      stopVal [duration (s)] = 1.0
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_15
  Routine juice_eval
    CodeComponent code_18
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
      End Routine:
        inputText=""
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
    TextComponent quest_prompt
      color = black
      text = How much do you think 100ml of juice is worth? (please write down the number in pence, e.g. for one pound, write down 100) 
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent continue_key
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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    TextComponent resp_box
      color = blue
      text [set every frame] = $(inputText)
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent juice_valuation
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine transition
    CodeComponent code_24
      Begin Routine:
        if run_matrix:
            # find appropriate t_values for our participant
            t_values = sorted(matrix_reason[participant_type][participant_age].values())

            # compute cumulative score from the matrix reasoning test

            f_r = '03'
            s_r = '02'

            if f_r in stor_matrix_ans and stor_matrix_ans[f_r] == 1:
                if stor_matrix_ans[s_r] == 1:
                    ans_sum = str(sum(stor_matrix_ans.values()) + 1)
                # if s_r is 0, then it will automatically go to 1 as well so all will be accounted for
                else:
                    ans_sum = str(sum(stor_matrix_ans.values()))

            elif f_r not in stor_matrix_ans:
                ans_sum = str(sum(stor_matrix_ans.values()) + 3) # this necessarily means



            part_t = matrix_reason[participant_type][participant_age][ans_sum]

            # we arbitrarily pick a higher and lower t score value

            t_modifier = 15

            low = part_t - t_modifier
            medium = part_t + 2         # this will in most if not all cases yield the next or second next item of the three items
            high = part_t + t_modifier  # where the participant has failed. they therefore represent the medium difficulty

            # exception handling | 80 is the max t values and 20 is the min t value

            if high > 80:
                high = 80

            if low < 20:
                low = 20

            # now we find the t value that corresponds and/or is closest to the newly obtained modifier

            low = min(enumerate(t_values), key=lambda i: abs(i[1]-low))[1]
            medium = min(enumerate(t_values), key=lambda i: abs(i[1]-medium))[1]
            high = min(enumerate(t_values), key=lambda i: abs(i[1]-high))[1]


            for key, value in matrix_reason[participant_type][participant_age].items():
                if value == high:
                    high = key
                if value == low:
                    low = key
                if value == medium:
                    medium = key

            # they are now saved as the number of correct items which will correspond to the
            # row they are being pulled from from the .csv. This is only approximate because
            # obviously someone can have 1 incorrect and two further ones correct. this is not
            # likely to happen often though.

            # we now convert them to rows. to all of them we need to add +2 due to sample item A and B being
            # in the first two rows

            # these are now ready for the final examination

            # we can make this also such that if a participant has some incorrect responses in the middle
            # then it will fetch those items closest to the t values of the participant that were incorrect
            # this will fetch either ones that had yet to be shown or were shown already but participants
            # responded on them incorrectly

            low = int(low) + 2
            medium = int(medium) + 2
            high = int(high) + 2
            # these are the index values of items that we want to pick.
            t = [low, medium, high]

        else:
            part_t = ''
            t = ''
            ans_sum = ''
            tmp_list = []
      End Routine:
        if run_matrix:
            # complete path
            complete = set_filename(part_char, 'matrix_reasoning')

            # current file
            matrix_data = open(complete, 'w')

            struct_1 = ''
            struct_2 = ''

            for i in range(1, 31):
                struct_1 +=  "item_" + str(i) + "\t"
                struct_2 += "{}\t"

            struct_1 += "sub_id\n"
            struct_2 += "{}\n"

            matrix_data.write(struct_1)


            # take the length of the actual responses
            sma_len = len(stor_matrix_ans.keys())

            tmp_keys = sma_len*[None]

            # populate it with the index values of the tmp_list where 0s should be theoretically
            # substituted with the real responses
            for i in range(0, sma_len):
                tmp_keys[i] = (int(stor_matrix_ans.keys()[i]) - 1) # we reduce it by one and transform it
                                                                     # into an index

            for el in tmp_keys:
                key_el = el + 1 # transform back into key
                if key_el < 10:
                    key_el = '0' + str(key_el)
                else:
                    key_el = str(key_el)

                tmp_list[el] = stor_matrix_ans[key_el]

            tmp_list.append(part_char[1]) # sub_id

            matrix_data.write(struct_2.format(tmp_list[0], tmp_list[1],tmp_list[2], tmp_list[3],
                                                  tmp_list[4], tmp_list[5],tmp_list[6], tmp_list[7],
                                                  tmp_list[8], tmp_list[9],tmp_list[10], tmp_list[11],
                                                  tmp_list[12], tmp_list[13],tmp_list[14], tmp_list[15],
                                                  tmp_list[16], tmp_list[17],tmp_list[18], tmp_list[19],
                                                  tmp_list[20], tmp_list[21],tmp_list[22], tmp_list[23],
                                                  tmp_list[24], tmp_list[25],tmp_list[26], tmp_list[27],
                                                  tmp_list[28], tmp_list[29],tmp_list[30]))



            matrix_data.close()

            # clear variables
            struct_1 = ''
            struct_2 = ''
            tmp_list = []
    TextComponent text_54
      color = black
      text = We would now like you to answer a number of questions!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_66
      color = black
      text [set every repeat] = $part_t
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_67
      color = black
      text [set every repeat] = $t
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_68
      color = black
      text [set every repeat] = $ans_sum
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_69
      color = black
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine ev_prom
    KeyboardComponent ev_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6'
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        curr_q = current_question

        # this is added because by having an id of the question
        # where the questions are randomised, we can simply store it
        # later
        q_id = sav_mapping
    TextComponent text_5
      wrapWidth = 0.8
      text [set every repeat] = $current_question
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent first
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.8, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent second
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.5, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent third
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.2, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fourth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.1, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fifth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.4, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent sixth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.7, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    TextComponent text_12
      text = 1
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_13
      text = 2
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_14
      text = 3
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_15
      text = 4
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_16
      text = 5
      pos = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_47
      text = 6
      pos = [0.7, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine water_disp
    CodeComponent code_3
      Begin Routine:
        if juice_trial == 3:
        #    dev.write('\4')
            continue

        juice_trial += 1

        if juice_trial == 4:
            run_dispenser = 1
            juice_trial = 1
    TextComponent cross_sign
      text = You are receiving water to cleanse your palate.
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine jui_inf
  Routine main_feed
    PolygonComponent feed_info
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.8, 0.1)
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  Routine mat_ev
    CodeComponent code_19
      Begin Routine:
        correct_answer = stim_corr_ans[matrix_trial-1]
        curr_matrix = stim_list[matrix_trial-1] # take -1 because
                                                 # we init matrix_trial
                                                 # as 1

        if matrix_trial <= 2:
            begin_blurb = 'Answer by pressing keys from 1 to 5. If you do not know the answer, press 6.'
        else:
            begin_blurb = ''

        if matrix_trial == 3:
            indx = 5
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 4 and not initiate_reverse:
            indx = 6
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 4 and initiate_reverse:
            indx = 4
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 5 and not initiate_reverse:
            indx = 7
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 5 and initiate_reverse and indx == 4: # if we have already presented item 3
            indx = 3
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 5 and initiate_reverse and indx == 6:
            indx = 4
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 6 and not initiate_reverse:
            indx = 8
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 6 and reverse_corrected:
        # this assumes that initiate_reverse has been turned off
            indx = 6
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            reverse_corrected = 0
            failed_seq = 2

        # the elif above will catch if its trial 6 and the sub had a correct response for 3 and 2
        # we would enter this only if the person would be incorrect in 3 2 and 1

        elif matrix_trial == 6 and initiate_reverse and indx == 3:
            indx = 2
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 6 and initiate_reverse and indx == 4:
            indx = 3
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 7 and failed_seq == 2:
            indx = 7
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            failed_seq = 2

        elif matrix_trial == 7 and not initiate_reverse:
            indx = 9
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 7 and initiate_reverse and indx == 3 and not reverse_corrected:
            indx = 2
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 7 and initiate_reverse and indx == 2:
            indx = 6
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            failed_seq = 1

        elif matrix_trial == 7 and reverse_corrected and indx == 2:
            indx = 6
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            reverse_corrected = 0
            failed_seq = 1

        # for the last two, it should automatically go ahead with either 5 or 6 regardless of whether reverse was corrected or not
        # so it needs to be set appropriately
        elif matrix_trial == 7 and reverse_corrected and indx == 3:
            indx = 7
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            reverse_corrected = 0
            failed_seq = 2

        elif matrix_trial == 8 and indx == 2:
            failed_seq = 2

        # this will hold true for all subsequent ones. placing it before the one we actually have last is a cheap way of avoiding
        # additional thought
        elif matrix_trial >= 8:
            if failed_seq == 1:
                indx = matrix_trial - 1
            elif failed_seq == 2:
                indx = matrix_trial
            else:
                indx = matrix_trial + 2 # this is the correct difference between the matrix trial and the index acces element

            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 8 and reverse_corrected:
            indx = 7
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            reverse_corrected = 0
            failed_seq = 1


        if matrix_trial >= 4:

            diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                              "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                              str(curr_matrix) + ", turn off: " + str(turn_off) + "\n" + \
                              "response storage: " + str(tmp_evaluater)
        else:
            diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                              "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                              str(curr_matrix) + ", turn off: " + str(turn_off)
      End Routine:
        chosen_item = item_resp.keys
    ImageComponent image_3
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_matrix
      size = (1.5, 1.5)
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    KeyboardComponent item_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6'
      startVal [time (s)] = 0.0
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    TextComponent text_55
      wrapWidth = 1.4
      color = black
      text [set every repeat] = $begin_blurb
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent diagnostics_3
      color = black
      text [set every repeat] = $diagnostics_info
      pos = (0.4, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine real_ann
    PolygonComponent background_poly3
      opacity = 0.5
      fillColor = $[1,1,1]
      lineColor = $[-1, -1, -1]
      startVal [time (s)] = 0.0
      size = (0.8, 1.8)
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    TextComponent text_26
      text = Now the game begins!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_27
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine cog_eff_fin
Flow
  Routine instr1
  LoopInitiator mat_tr loopType="TrialHandler"
    conditionsFile = m_reason.csv
    loopType = sequential
    nReps = $run_matrix
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    conditions:
      [{'item': u'Sample Item A-1.png', 'corr_answ': 2},
      {'item': u'Sample Item B-1.png', 'corr_answ': 3},
      {'item': u'Item1-1.png', 'corr_answ': 2},
      {'item': u'Item2-1.png', 'corr_answ': 1},
      {'item': u'Item3-1.png', 'corr_answ': 3},
      {'item': u'Item4-1.png', 'corr_answ': 1},
      {'item': u'Item5-1.png', 'corr_answ': 5},
      {'item': u'Item6-1.png', 'corr_answ': 1},
      {'item': u'Item7-1.png', 'corr_answ': 3},
      {'item': u'Item8-1.png', 'corr_answ': 3},
      {'item': u'Item9-1.png', 'corr_answ': 4},
      {'item': u'Item10-1.png', 'corr_answ': 2},
      {'item': u'Item11-1.png', 'corr_answ': 3},
      {'item': u'Item12-1.png', 'corr_answ': 4},
      {'item': u'Item13-1.png', 'corr_answ': 1},
      {'item': u'Item14-1.png', 'corr_answ': 4},
      {'item': u'Item15-1.png', 'corr_answ': 2},
      {'item': u'Item16-1.png', 'corr_answ': 5},
      {'item': u'Item17-1.png', 'corr_answ': 4},
      {'item': u'Item18-1.png', 'corr_answ': 2},
      {'item': u'Item19-1.png', 'corr_answ': 4},
      {'item': u'Item20-1.png', 'corr_answ': 2},
      {'item': u'Item21-1.png', 'corr_answ': 3},
      {'item': u'Item22-1.png', 'corr_answ': 3},
      {'item': u'Item23-1.png', 'corr_answ': 1},
      {'item': u'Item24-1.png', 'corr_answ': 4},
      {'item': u'Item25-1.png', 'corr_answ': 4},
      {'item': u'Item26-1.png', 'corr_answ': 2},
      {'item': u'Item27-1.png', 'corr_answ': 5},
      {'item': u'Item28-1.png', 'corr_answ': 5},
      {'item': u'Item29-1.png', 'corr_answ': 1},
      {'item': u'Item30-1.png', 'corr_answ': 2}]
    Routine mat_ev
    Routine mat_ans
    LoopInitiator matrix_re loopType="TrialHandler"
      loopType = random
      nReps = $run_correct
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      Routine mat_re
    LoopTerminator matrix_re
  LoopTerminator mat_tr
  Routine transition
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = $run_debug
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    LoopInitiator init_qs loopType="TrialHandler"
      conditionsFile = initial_q.csv
      loopType = random
      nReps = 0
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      Routine ev_iniq
    LoopTerminator init_qs
    LoopInitiator trial_pic_eval loopType="TrialHandler"
      conditionsFile = pic_rating.csv
      loopType = random
      nReps = $run_pic_eval_b
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      Routine ev_pic
    LoopTerminator trial_pic_eval
    Routine est_sal
    LoopInitiator jui_typ loopType="TrialHandler"
      conditionsFile = juice_types.csv
      loopType = random
      nReps = 1
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      LoopInitiator jui_sal loopType="TrialHandler"
        conditionsFile = juice_salience.csv
        loopType = random
        nReps = 1
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        LoopInitiator disp loopType="TrialHandler"
          loopType = random
          nReps = $run_dispenser
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          Routine supl_jui
        LoopTerminator disp
        Routine ev_jui
        Routine jui_fe
        LoopInitiator disp_c loopType="TrialHandler"
          loopType = random
          nReps = $run_water
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          Routine water_disp
        LoopTerminator disp_c
      LoopTerminator jui_sal
    LoopTerminator jui_typ
    Routine jui_out
    LoopInitiator juice_re loopType="TrialHandler"
      loopType = random
      nReps = $run_juice_reeval
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      Routine jui_re
    LoopTerminator juice_re
  LoopTerminator trials
  Routine test
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = main_trials.csv
    loopType = random
    nReps = $run_all
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    conditions:
      [{'cue': u'A', 'reward_type': 1, 'target': u'X'},
      {'cue': u'A', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'},
      {'cue': u'B', 'reward_type': 2, 'target': u'Y'},
      {'cue': u'B', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'X'},
      {'cue': u'B', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'}]
    LoopInitiator prac_info loopType="TrialHandler"
      loopType = random
      nReps = $run_prac
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      Routine prac_ann
    LoopTerminator prac_info
    LoopInitiator real_info loopType="TrialHandler"
      loopType = random
      nReps = $run_real
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      Routine real_ann
    LoopTerminator real_info
    LoopInitiator rew_role loopType="TrialHandler"
      loopType = random
      nReps = run_rew
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      Routine rew_ann
    LoopTerminator rew_role
    LoopInitiator exp_loop loopType="TrialHandler"
      conditionsFile = flanker_trials.csv
      loopType = random
      nReps = 1
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      LoopInitiator ev_role loopType="TrialHandler"
        loopType = random
        nReps = run_ev
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        LoopInitiator ev_loop loopType="TrialHandler"
          conditionsFile = ev.csv
          loopType = random
          nReps = 1
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          conditions:
            [{'current_question': u'firstq'},
            {'current_question': u'secondq'},
            {'current_question': u'thirdq'},
            {'current_question': u'fourthq'}]
          Routine ev_prom
          Routine ev_feed
        LoopTerminator ev_loop
        Routine ev_save
      LoopTerminator ev_role
      LoopInitiator effort_role loopType="TrialHandler"
        loopType = random
        nReps = run_effort
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        Routine eff_prom
        Routine eff_press
        Routine eff_feed
      LoopTerminator effort_role
      LoopInitiator flanker_role loopType="TrialHandler"
        loopType = random
        nReps = run_flanker
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        Routine beg_fix
        Routine tar_ann
        Routine main_feed
        Routine comp
        Routine tar_feed
      LoopTerminator flanker_role
    LoopTerminator exp_loop
  LoopTerminator main_loop
  Routine cog_eff_fin
  Routine cog_eff_fin_answ
  LoopInitiator nasa_trials loopType="TrialHandler"
    conditionsFile = nasa_tlx.csv
    loopType = random
    nReps = $run_nasa
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    Routine nasa_tlx
  LoopTerminator nasa_trials
  Routine juice_eval
  LoopInitiator final_pic_eval_trials loopType="TrialHandler"
    conditionsFile = pic_rating.csv
    loopType = random
    nReps = $run_pic_eval_e
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    Routine ev_pic
  LoopTerminator final_pic_eval_trials
  Routine final_screen
