PsychoPy2experiment version="1.85.3"
Settings
  Monitor = default
  color = $[1, 1, 1]
  Experiment info = {u'run_second': u'1', u'go_pract': u'12', u'eff_pract': u'4', u'age': u'1992-11-12', u'participant': u'9999', u'sample': u'1', u're_o': u'1', u'g_conn': u'1', u'type': u'1', u'run_first': u'1'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Use version = 1.84
  Save csv file = True
  Save log file = False
  expName = psreff3
  Screen = 1
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Routines
  Routine mat_ans
    CodeComponent code_20
      Code Type = Py
      End Routine:
        if matrix_reeval.keys == 'n':
            run_correct = 1

        else:
            run_correct = 0 # dont need to run the second part

            if matrix_trial >= 3:
                responded_correctly, stor_matrix_ans = matrix_response(item_resp, correct_answer, stor_matrix_ans, curr_matrix)
                tmp_evaluater.append(responded_correctly)

                # main stop rule
                mat_tr.finished = trial_evaluater(tmp_evaluater)

                # item 4
            if matrix_trial == 3 and not responded_correctly:
                already_switched = 1
                initiate_reverse = 1

                # item 5
            elif matrix_trial == 4 and not already_switched and not responded_correctly:
                already_switched = 1
                initiate_reverse = 1

            if not turn_off: # this prevents from this whole thing getting evaluated unnecessarily
                reverse_corrected, stor_aux_ans, turn_off = reverse_correction(matrix_trial, indx, stor_aux_ans, responded_correctly, tmp)

            if matrix_trial >= 3:

                diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                                  "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                                  str(curr_matrix) + ", turn off: " + str(turn_off) + "\n" + \
                                  "response storage: " + str(tmp_evaluater)
            else:
                diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                                  "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                                  str(curr_matrix) + ", turn off: " + str(turn_off)

            matrix_trial += 1

            if curr_matrix == last_matrix:
                mat_tr.finished=True
    ImageComponent image_4
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_matrix
      size = (1.5, 1.5)
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    PolygonComponent polygon_2
      pos = (0, 0.3)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.7, 0.9)
      fillColor = $[0,0,0]
      opacity = 0.9
      lineColor = $[0.2, 0.2, 0.2]
      lineWidth = 10
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    TextComponent text_51
      text = You have chosen:
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_52
      text [set every repeat] = $chosen_item
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    KeyboardComponent matrix_reeval
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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    TextComponent text_53
      wrapWidth = 0.6
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If this is true, press "y".
        If you want to choose again, press "n".
    TextComponent diagnostics
      opacity = 0
      color = black
      text [set every repeat] = $diagnostics_info
      pos = (0.4, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    PolygonComponent polygon_5
      pos [set every repeat] = $pos
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.2, 0.3)
      fillColor = $[1, 0.84, 0.2]
      nVertices = 90
      opacity [set every repeat] = $opac
      lineColor = $[1, 0.84, 0.2]
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  Routine supl_jui
    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        pump_indx = current_pump # information is in the csv
                                 # randomly takes one of the first three pumps
                                 # sends pump vol

        # fetch correct one from initial definition of pumps
        pump = pumps[pump_indx]

        if gust_connected:
            dev.write(pump)
        # after it sends, it should wait a bit
        win.mouseVisible = False

        #duration set to 10s
        jui_t = 7.5
    TextComponent text_4
      color = black
      text [set every repeat] = $pump
      stopVal [duration (s)] = $jui_t
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent jui_pic
      stopVal [duration (s)] = $jui_t
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_juice
      size = (0.15, 0.6)
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  Routine real_go_ann
    CodeComponent code_41
      Code Type = Py
      Begin Routine:
        if run_real == 1:

            go_trial = 1
            run_real = 0

            tmp_rt = [mean(tmp_rt)] # on the first real trial, we let the beginning
                                     # mean be their practice mean

            lh, tutorial_opac = turn_off_tutorial()

            go_switch = 1

            try:
                controller = tobii_controller(win)
                et_connected = 1
            except:
                 et_connected = 0

            try:
                controller.show_status()
            except:
                print("Failed to show status on begin")

        if et_connected:
            eyetracker_file = 'data/eyetracker/eyetracker_' + sub_id + '_' + dat + '.tsv'
            controller.open_datafile(eyetracker_file, embed_events=True)

            background_image.setAutoDraw(False)
            win.setColor('gray')

            try:
                ret = controller.run_calibration(
                    [(-0.4,0.4), (0.4,0.4) , (0.0,0.0), (-0.4,-0.4), (0.4,-0.4)],
                    )
            except:
                print("Calibration did run correctly.")

            try:
                controller.subscribe()
                controller.record_event('begin go')
            except:
                print("Couldn't subscribe and run go at beginning.")

            background_image.setAutoDraw(True)
    TextComponent text
      text = Now the main game begins!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_81
      text = Press RIGHT to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine jui_re
    CodeComponent code_26
      Code Type = Py
      Begin Routine:
        random.shuffle(juices) # by shuffling this we always randomise presen
                               # tation sequence. simultaneously we can still
                               # extract information in the end routine without
                               # further modification because in that case the
                               # positioning remains the same

        for el in juices:
            tmp_list.append(gen_stim_path(el))


        juice_1, juice_2, juice_3 = tmp_list
      End Routine:
        run_juice_reeval = 0

        fav_juice = tmp_list[int(jui_resp.keys)-1]

        fav_juice = remove_stim_path(fav_juice)

        fav_juice_pump, fav_juice_pumpid, fav_juice_path = juice_out(part_char, stor_jui_eval, fav_juice)

        tmp_list = []
      Each Frame:
        #l, _, r = mouse.getPressed()

        #if l or r:
        #    x, y = get_mouse_coord(mouse)

        #    j1 = get_mouse_choice_simple(x, y, -0.55, -0.25, 0.1, 0.7, 0)
        #    j2= get_mouse_choice_simple(x, y, -0.15, 0.15, 0.1, 0.7, 1)
        #    j3 = get_mouse_choice_simple(x, y, 0.25, 0.55, 0.1, 0.7, 2)

        #    mx = max([j1, j2, j3])

        #    if mx < 5: # means one of them evaluated to true
        #        print("this is mx {}".format(mx))
        #        print("This is tmp list {}".format(tmp_list))
        #        fav_juice = tmp_list[mx].split('/')[1].split('.')[0] # and we can index that one
        #        print(fav_juice)
        #        continueRoutine = False
        #        run_juice_reeval = 0
        #        juice_re.finished = True
        #        mouse_rt = time.time() - begin
        #    else:
        #        mouse.clickReset()
        #        core.wait(.01)
    TextComponent mouse_prompt
      color = black
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Select your favourite by pressing:
        1 (left), 2 (middle), 3 (right)
    ImageComponent jui_pic_1
      pos = (-0.4, -0.4)
      startVal [time (s)] = 0.0
      image [set every repeat] = $juice_1
      size = (0.15, 0.6)
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    ImageComponent jui_pic_2
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      image [set every repeat] = $juice_2
      size = (0.15, 0.6)
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    ImageComponent jui_pic_3
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      image [set every repeat] = $juice_3
      size = (0.15, 0.6)
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    KeyboardComponent jui_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3'
      startVal [time (s)] = 0.0
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  Routine ev_jui
    KeyboardComponent juice_resp
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5','6'
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        curr_q = current_question
    TextComponent text_30
      wrapWidth = 0.8
      color = black
      text [set every repeat] = $current_question
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent first_2
      pos = [-0.8, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent second_2
      pos = [-0.5, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0, 0, 0]
      lineWidth = 10
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    PolygonComponent third_2
      pos = [-0.2, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0, 0, 0]
      lineWidth = 10
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    PolygonComponent fourth_2
      pos = [0.1, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent fifth_2
      pos = [0.4, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent sixth_2
      pos = (0.7, -0.6)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0, 0, 0]
      lineWidth = 10
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    TextComponent text_31
      text = 1
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_32
      text = 2
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_33
      text = 3
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_34
      text = 4
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_35
      text = 5
      pos = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_22
      text = 6
      pos = [0.7, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    ImageComponent image_23
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_juice
      size = (0.15, 0.6)
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  Routine ev_feed
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        # changes colors
        opt_1, opt_2, opt_3, opt_4, opt_5, opt_6 = color_change(ev_resp.keys, options)

        # selects correct part
        opt_1, opt_2, opt_3, opt_4, opt_5, opt_6 = opt_1[1], opt_2[1], opt_3[1], opt_4[1], opt_5[1], opt_6[1]

        stor_ev[str(ev_trial)] = [q_id, int(ev_resp.keys), ev_resp.rt]
      End Routine:
        ev_trial += 1
    PolygonComponent first_feedback
      pos = [-0.8, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_1
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent second_feedback
      pos = [-0.5, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_2
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent third_feedback
      pos = [-0.2, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_3
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent fourth_feedback
      pos = [0.1, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_4
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent fifth_feedback
      pos = [0.4, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_5
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent sixth_feedback
      pos = (0.7, -0.6)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_6
      stopVal [duration (s)] = 0.5
      lineColor = $[0, 0, 0]
      lineWidth = 10
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    TextComponent text_17
      text = 1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_18
      text = 2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_19
      text = 3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_20
      text = 4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_21
      text = 5
      stopVal [duration (s)] = 0.5
      pos = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_46
      text = 6
      stopVal [duration (s)] = 0.5
      pos = [0.7,  -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_91
      text = Tutorial
      stopVal [duration (s)] = 0.5
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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  Routine ev_expl
    CodeComponent code_28
      Code Type = Py
      Begin Routine:
        texts_main = ["In this game, we simply want you to tell us how much you like this reward", \
                          "You will do this by answering a few questions on the next screen!"]



        text_rew = texts_main[ev_instr_trial - 1]
      End Routine:
        ev_instr_trial, run_ev_instr = stop_instructions(ev_instr_trial, texts_main, run_ev_instr)

        if not run_ev_instr:
            continueRoutine = False
            trials_3.finished = True
    TextComponent text_45
      text [set every repeat] = $text_rew
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent text_64
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent text_89
      text = Tutorial
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    PolygonComponent polygon_7
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      lineColor = $[1,-1, -1]
      lineWidth = 10
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  Routine ev_save
    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        long_stor = [trial, stor_ev['1'][0], stor_ev['1'][1], stor_ev['1'][2], \
                                   stor_ev['2'][0], stor_ev['2'][1], stor_ev['2'][2], \
                                   stor_ev['3'][0], stor_ev['3'][1], stor_ev['3'][2], reinforcer, sub_id]

        # saves to participant file
        save_ev(long_stor, ev_f)
        # clear them out for the next trial
        stor_ev = collections.defaultdict()
        long_stor = []
        ev_trial = 1
      End Routine:
        if go_trial >= num_trials and eff_trial >= num_eff_trials:
            run_rew, run_ev, run_effort, run_go = determine_sequence(type, 'ev', 1)
        else:
            run_rew, run_ev, run_effort, run_go = determine_sequence(type, 'ev', 0)
  Routine nasa_tlx
    CodeComponent code_25
      Code Type = Py
      Begin Routine:
        nasa_question = current_question
        win.mouseVisible = True
      End Routine:
        stor_nasa_q.append([sav_mapping, rating_3.getRating()])

        #if cog_eff_trial == 3:
        #    row_len = 6
        #else:
        row_len = 6

        tmp_trial += 1

        if tmp_trial == row_len: # end of questions about nasa

            complete = set_filename(part_char, str(curr[0]) + str(cog_eff_trial) + '_nasa_tlx(nasa_tlx.csv)')
            nasa_q = open(complete, 'w')

            stor_nasa_q = sorted(stor_nasa_q, key=lambda x: x[0])

            for el1, el2 in stor_nasa_q:
                struct_1 += "nasa_q" + str(el1) + "\t"

            struct_1 += "reinforcer\t" + "sub_id\n"  #subid

            nasa_q.write(struct_1)


            for i in range(0, len(stor_nasa_q)):
                struct_2 += "{}\t"

            struct_2 += "{}\t{}\n"

            tmp_list = [el2 for el1, el2 in stor_nasa_q]

            tmp_list.append(curr[0])
            tmp_list.append(sub_id)

            nasa_q.write(struct_2.format(tmp_list[0], tmp_list[1], tmp_list[2], tmp_list[3],
                                             tmp_list[4], tmp_list[5], tmp_list[6], tmp_list[7]))
            nasa_q.close()
            print("Successfully saved the NASA TLX dataset.")

            struct_1 = ''
            struct_2 = ''
            tmp_list = []
            stor_nasa_q = []
            tmp_trial = 0
    TextComponent nasa_tlx_text
      color = black
      text [set every repeat] = $nasa_question
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating_3
      pos = 0, -0.6
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      visualAnalogScale = True
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      customize_everything:
        size = 0.8,
        lineColor = 'black',
        stretch = 1.8,
        textColor = "black",
        scale = None,
        labels = ['Very Low', 'Very High'],
        low = 1,
        high = 20,
        mouseOnly = True
  Routine eff_practice
    TextComponent text_104
      text = Let's practice!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine real_ann
    CodeComponent code_32
      Code Type = Py
      Begin Routine:
        if run_real == 1:

            eff_trial = 1
            run_real = 0

            lh, tutorial_opac = turn_off_tutorial()

            eff_switch = 1

            tmp_design_matrix = [] # cleans out and starts with a new matrix after the real trials
            tmp_design_matrix = deepcopy(design_matrix)      # start the real experiment
            random.shuffle(tmp_design_matrix)
            tmp_str = ''
            run_real = 0
    TextComponent text_26
      text = Now the main game begins!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_27
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine eff_press
    CodeComponent code_29
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False

        diagnostics = str(["eff tr: ", eff_trial, "design matrx: ", len(tmp_design_matrix), "haflway eff: ", halfway_eff, "run_effort: {}", run_effort, "run_go {}".format(run_go)])

        if not len(tmp_design_matrix):                      # we do this only once
            tmp_design_matrix = deepcopy(design_matrix_2)
            random.shuffle(tmp_design_matrix)
        #    continueRoutine = False
            run_effort = 0

        #print(tmp_design_matrix)
        el = 0                                               # take the first element

        opt = tmp_design_matrix[el]                          # first one is always the door
        tmp_design_matrix.pop(el)                            # remove so it doesn't repeat


        door1 = opt[0]
        chest1 = opt[1]
      End Routine:
        if eff_choice_box.keys == 'left' and key_position == 1:
            eff_choice = 1
            picked_yes = 'green'
            picked_no = 'white'
            tr_dr = door1
            tr_ch = chest1

        elif eff_choice_box.keys == 'left' and key_position == 2:
            eff_choice = 0
            picked_yes = 'white'
            picked_no = 'green'
            tr_dr = door1
            tr_ch = chest1
            door1 = gen_stim_path('empty')
            chest1 = gen_stim_path('empty')

        if eff_choice_box.keys == 'right' and key_position == 1:
            eff_choice = 0
            picked_yes = 'white'
            picked_no = 'green'
            tr_dr = door1
            tr_ch = chest1
            door1 = gen_stim_path('empty')
            chest1 = gen_stim_path('empty')

        elif eff_choice_box.keys == 'right' and key_position == 2:
            eff_choice = 1
            picked_yes = 'green'
            picked_no = 'white'
            tr_dr = door1
            tr_ch = chest1
    ImageComponent dr1
      color = $[1, 1, 1]
      startVal [time (s)] = 0.0
      image [set every repeat] = $door1
      size = (0.3, 0.5)
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    ImageComponent chst1
      pos = (0,0.55)
      startVal [time (s)] = 0.0
      image [set every repeat] = $chest1
      size = (0.3, 0.5)
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    PolygonComponent polygon_14
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      lineColor = $[1, -1, -1]
      lineWidth = 10
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    TextComponent text_96
      text = Tutorial
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    TextComponent text_114
      color = blue
      text = Please respond faster.
      pos = (0, 0.8)
      startVal [time (s)] = 2.5
      letterHeight = 0.1
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    KeyboardComponent eff_choice_box
      forceEndRoutine = True
      allowedKeys = 'left', 'right'
      startVal [time (s)] = 0.0
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    TextComponent text_78
      text = Yes
      pos [set every repeat] = $yes
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_118
      text = No
      pos [set every repeat] = $no
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine cog_eff_fin_select
    CodeComponent code_43
      Code Type = Py
      Begin Routine:
        background_image.setAutoDraw(False)
        win.setColor('white')
        # if both picked are 0
        if not len(difficulty_lev):
            fin_pic = gen_stim_path('empty')
            fin_diff = gen_stim_path('empty')
            fin_rew = gen_stim_path('empty')
            run_nasa = 0
            run_fin_eff_tr = 0

        elif len(difficulty_lev) == 1:

            if cog_eff_trial == 1:
                fin_pic = stim_list[difficulty_lev[0]]

                curr = rews[0]
                curr = curr.split('_')

                if curr[0] == 'primary':
                    fin_rew = curr[1] + '_' + 'drops_' + fav_juice
                else:
                    fin_rew = curr[1] + '_' + 'pounds'

                fin_rew = gen_stim_path(fin_rew)

                fin_diff = gen_stim_path(diffs[0])

         #   try:
         #       controller = tobii_controller(win)
         #   except:
         #        pass
            if et_connected:
                    trig_begin = curr[0] + '_6'
                    controller.record_event(trig_begin)    # trigger for begin cog eff fin

            else:
                fin_pic = gen_stim_path('empty')
                fin_rew = gen_stim_path('empty')
                fin_diff = gen_stim_path('empty')
                run_nasa  = 0
                run_fin_eff_tr = 0
        else:

            fin_pic = stim_list[difficulty_lev[cog_eff_trial - 1]]
            fin_diff = gen_stim_path(diffs[cog_eff_trial - 1])
            curr = rews[cog_eff_trial - 1]
            curr = curr.split('_')

            if curr[0] == 'primary':
                fin_rew = curr[1] + '_' + 'drops_' + fav_juice
            else:
                fin_rew = curr[1] + '_' + 'pounds'

            fin_rew = gen_stim_path(fin_rew)


            if et_connected:
                trig_begin = str(curr[0]) + '_5'
                controller.record_event(trig_begin)    # trigger for begin cog eff fin
    TextComponent text_115
      color = black
      text = The computer selected:
      stopVal [duration (s)] = 1.5
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_31
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $fin_diff
      size = (0.3, 0.5)
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    ImageComponent image_32
      stopVal [duration (s)] = 1.5
      pos = (0.0, 0.55)
      startVal [time (s)] = 0.0
      image [set every repeat] = $fin_rew
      size = (0.35, 0.5)
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
  Routine pause
    TextComponent text_90
      text = You have a short break before the calibration!
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_42
      Code Type = Py
      Begin Routine:
        run_pause = 0
      End Routine:
        if et_connected:
            background_image.setAutoDraw(False)
            win.setColor('gray')
            try:
                controller.show_status()
            except:
                print("Failed to show status on begin")

            try:
                ret = controller.run_calibration(
                    [(-0.4,0.4), (0.4,0.4) , (0.0,0.0), (-0.4,-0.4), (0.4,-0.4)],
                    )
            except:
                print("Calibration did not work correctly at pause")

            try:
                controller.record_event('pause at trial ' + str(go_trial))
            except:
                print("Couldn't record event at pause on trial {}".format(str(go_trial)))


            background_image.setAutoDraw(True)
    KeyboardComponent key_resp_17
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine eff_feed
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
      End Routine:
        run_effort_midway = 0                                        # should be always turned off


        tmp = remove_stim_path(tr_ch).split('_') # takes only the main information. works for drops and pounds

        if len(tmp) == 3:
            eff_rew, eff_reinf, _ = tmp
        else:
            eff_rew, eff_reinf = tmp

        eff_rew = eff_rew.strip()
        eff_reinf = eff_reinf.strip()

        if eff_reinf == 'drops':
            eff_reinf = 'primary'
        else:
            eff_reinf = 'secondary'

        eff_diff = remove_stim_path(tr_dr).strip()


        stor_eff = [eff_trial, eff_reinf, eff_rew, eff_diff,  eff_choice, eff_choice_box.rt, part_char[1]]
        save_eff(stor_eff, eff_f)


        if eff_trial == eff_pract and not eff_switch:               # eff switch is used because we revert eff trial
            run_real = 1                                            # to 1 after finishing the practice trial
            lh, tutorial_opac = turn_off_tutorial()                 # so when the switch is turned on
                                                                    # the tutorial goes off

        if eff_trial == halfway_eff:                                 # if we reached the middle
            run_rew, run_ev, run_effort, run_go = determine_sequence(type, 'eff', 0)
            run_eff_instr = 0
            run_effort_midway = 1                                    # so next time we see it, it will change

        elif eff_trial == num_eff_trials + eff_pract:                     # if they are done with the task
            run_rew, run_ev, run_effort, run_go = determine_sequence(type, 'eff', 1)
            run_eff_instr = 0                                        #

        if not len(tmp_design_matrix):                           # this should only run
            run_transition = 1                                   # when we have emptied out
                                                                 # all the trials
        #if eff_trial >= 144:
        #    run_effort = 0
        #    effort_role.finished = True

        eff_trial += 1
    ImageComponent image_11
      stopVal [duration (s)] = 0.5
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $door1
      size = (0.3, 0.5)
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    ImageComponent image_12
      stopVal [duration (s)] = 0.5
      pos = (0.0,  0.55)
      startVal [time (s)] = 0.0
      image [set every repeat] = $chest1
      size = (0.3, 0.5)
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    TextComponent text_97
      text = Tutorial
      stopVal [duration (s)] = 0.5
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    PolygonComponent polygon_15
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      stopVal [duration (s)] = 0.5
      lineColor = $[1,-1, -1]
      lineWidth = 10
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    TextComponent text_119
      color [set every repeat] = $picked_yes
      text = Yes
      stopVal [duration (s)] = 0.5
      pos [set every repeat] = $yes
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_120
      color [set every repeat] = $picked_no
      text = No
      stopVal [duration (s)] = 0.5
      pos [set every repeat] = $no
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine calibration
    CodeComponent code_45
      Code Type = Py
      Begin Routine:
        try:
            controller = tobii_controller(win)
            et_connected = 1
        except:
            et_connected = 0

        if et_connected:
            win.setColor('gray')
            eyetracker_file = 'data/eyetracker/eyetracker_' + sub_id + '_' + dat + '.tsv'
            controller.open_datafile(eyetracker_file, embed_events=True)

            try:
                controller.show_status()
            except:
                print("Failed to show status on begin")


            try:
                ret = controller.run_calibration(
                    [(-0.4,0.4), (0.4,0.4) , (0.0,0.0), (-0.4,-0.4), (0.4,-0.4)],
                    )
            except:
                print("Couldn't calibrate before the cog eff for some reason.")
            background_image.setAutoDraw(True)

            try:
                controller.subscribe()
                controller.record_event('begin cog eff')
            except:
                print("Couldn't start subscribing to data for some reason")
      End Routine:
        tmp_trial = 0
  Routine mat_re
    ImageComponent image_5
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_matrix
      size = (1.5, 1.5)
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    KeyboardComponent item_resp_again
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5'
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = Py
      End Routine:
        # check for response

        if matrix_trial >= 3:
            responded_correctly, stor_matrix_ans = matrix_response(item_resp_again, correct_answer, stor_matrix_ans, curr_matrix)
            tmp_evaluater.append(responded_correctly)
            mat_tr.finished = trial_evaluater(tmp_evaluater)

        if not turn_off: # this prevents from this whole thing getting evaluated unnecessarily
            reverse_corrected, stor_aux_ans, turn_off = reverse_correction(matrix_trial, indx, stor_aux_ans, responded_correctly, tmp)

            # item 4
        if matrix_trial == 3 and not responded_correctly:
            already_switched = 1
            initiate_reverse = 1

        elif matrix_trial == 4 and not already_switched and not responded_correctly:
            already_switched = 1
            initiate_reverse = 1

        run_correct = 0

        if curr_matrix == last_matrix:
            mat_tr.finished=True

        if matrix_trial >= 3:

            diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                              "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                              str(curr_matrix) + ", turn off: " + str(turn_off) + "\n" + \
                              "response storage: " + str(tmp_evaluater)
        else:
            diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                              "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                              str(curr_matrix) + ", turn off: " + str(turn_off)

        matrix_trial += 1
    TextComponent diagnostics_2
      opacity = 0
      color = black
      text [set every repeat] = $diagnostics_info
      pos = (0.4, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine instr1
    KeyboardComponent instr1_resp
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import random, os, serial, time, collections
        from datetime import datetime
        from datetime import date
        from dateutil import relativedelta
        from copy import deepcopy
        import glob
        import math as m
        import itertools
        import webbrowser


        ################################################################################################
        ############################## set up eye tracker ##############################################
        ################################################################################################
        try:
            from psychopy_tobii_controller import tobii_controller
        except:
            print("Tobii wasn't imported")

        et_connected = 0

        ################################################################################################
        ########### listing all the functions in the experiment ########################################
        ################################################################################################

        def mean(inp):
            return float(sum(inp))/len(inp)

        def std(inp):
            tmp = 0
            avg = mean(inp)
            for el in inp:
                tmp += (el - avg)**2
            if len(inp) == 1:
                return m.sqrt(tmp/len(inp)) # computes pop std, happens only on first trial
            else:
                return m.sqrt(tmp/(len(inp) - 1)) # computes sample std

        def transform_information(diffs, t_scores):
            diff_levels = ['easiest', 'easy', 'medium', 'hard'] # we run this just once so I can initialise it inside the function
            diffs_copy = deepcopy(diffs)
            for idx, diff in enumerate(diffs_copy):

                for idx2, t in enumerate(t_scores):
                    if diff == diff_levels[idx2]:
                        diffs_copy[idx] = t_scores[idx2]

            return diffs_copy

        def get_current_text(texts, trial):
            return texts[trial]

        def stop_sequence(trial, limit, runner):
            if trial == len(limit):
                runner = 0
                trial = 1
            return [trial, runner]


        def get_input_box(dict_inp, key, type):
            tmp = dict_inp[key]
            if type == 1: # int
                return int(tmp)
            else:
                return str(tmp)


        def save_ev(ev_dataset, ev_f):

            ev_f.write("{} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \n".format(
                                                                                                  ev_dataset[0], \
                                                                                                  ev_dataset[1], \
                                                                                                  ev_dataset[2], \
                                                                                                  ev_dataset[3], \
                                                                                                  ev_dataset[4], \
                                                                                                  ev_dataset[5], \
                                                                                                  ev_dataset[6], \
                                                                                                  ev_dataset[7], \
                                                                                                  ev_dataset[8], \
                                                                                                  ev_dataset[9], \
                                                                                                  ev_dataset[10], \
                                                                                                  ev_dataset[11]))

        def save_eff(eff_dataset, eff_f):


            eff_f.write("{} \t {} \t {} \t {} \t {} \t {} \t {} \n".format(
                                                                          eff_dataset[0], \
                                                                          eff_dataset[1], \
                                                                          eff_dataset[2], \
                                                                          eff_dataset[3], \
                                                                          eff_dataset[4], \
                                                                          eff_dataset[5], \
                                                                          eff_dataset[6]))

        def save_go(go_dataset, go_f):

            go_f.write("{} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \t {} \n".format(
                                                                                                            go_dataset[0], \
                                                                                                            go_dataset[1], \
                                                                                                            go_dataset[2], \
                                                                                                            go_dataset[3], \
                                                                                                            go_dataset[4], \
                                                                                                            go_dataset[5], \
                                                                                                            go_dataset[6], \
                                                                                                            go_dataset[7], \
                                                                                                            go_dataset[8], \
                                                                                                            go_dataset[9], \
                                                                                                            go_dataset[10], \
                                                                                                            go_dataset[11], \
                                                                                                            go_dataset[12], \
                                                                                                            go_dataset[13]))




        def fill_keys(dict, keys):
            for k in keys:
                dict.setdefault(k, [])
            return dict

        def gen_stim_path(inp):
            return 'stimuli/' + inp + '.png'
            #return 'stimuli//' + inp + '.png'

        def set_matrix(indx, stim_list, stim_corr_ans):
            return [stim_list[indx], stim_corr_ans[indx]]

        options = [(1, [0.2, 0.2, 0.2]), \
                   (2, [0.2, 0.2, 0.2]), \
                   (3, [0.2, 0.2, 0.2]), \
                   (4, [0.2, 0.2, 0.2]), \
                   (5, [0.2, 0.2, 0.2]), \
                   (6, [0.2, 0.2, 0.2])]


        def color_change(picked_opt, options):
            copy_options = deepcopy(options)                                           # this way we preserve the original

            ch_option = [1, 0.84, 0.0]
            unch_col = [0.2, 0.2, 0.2]

            for indx, option in enumerate(options):
                if str(option[0]) == picked_opt:
                    tmp = list(options[indx])                                          # hack to remove issues with deleting
                    del tmp[1]
                    tmp.append(ch_option)
                    copy_options[indx] = tuple(tmp)
                else:
                    copy_options[indx] = tuple([indx+1, unch_col])
            return copy_options



        def matrix_response(answer, correct_answer, container, curr_matrix):
            responded_correctly = answer.keys == str(correct_answer)

            curr_matrix = curr_matrix.split('-')[0][-2:]                              # fetches the string of the item

            if responded_correctly:
                container[curr_matrix] = 1
            else:
                container[curr_matrix] = 0

            return [responded_correctly, container]

        def trial_evaluater(container):
            if sum(container[-3:]) == 0 and len(container) >= 6:                    # maybe change this but this assumes noone will have less
                return 1                                                              # than the first 10 incorrect



        def reverse_correction(matrix_trial, indx, aux_container, response, tmp):

            reverse_corrected = 0                                                      # these act as default values for the variables
            turn_off = 0
            if (matrix_trial == 4 and indx == 4) or (matrix_trial == 5 and indx == 4):
                tmp = 1
            elif (matrix_trial == 5 and indx == 3) or (matrix_trial == 6 and indx == 3):
                tmp = 2
            if tmp == 1 or tmp == 2:
                aux_container.append(response)

            if tmp == 2:
                if sum(stor_aux_ans) == 2:
                    reverse_corrected = 1
                    turn_off = 1

            return [reverse_corrected, aux_container, turn_off]

        def matrix_resp_parser(container):                          # deprecated
            tmp_it = [int(el) for el in container.keys()]
            tmp_it.sort()
            tmp_it = tmp_it[-1]

            if tmp_it < 10:
                tmp_it = '0' + str(tmp_it)
            else:
                tmp_it = str(tmp_it)

            return container[tmp_it]


        def set_filename(part_char, addon):

            fname = part_char[0] + '_' + part_char[1] + '_' + part_char[2] + '_' + part_char[3] + '_' + addon + '.txt'

        #    ctr = 0                                               # recursively checks if the file already exists, if it doesn't it stops
        #    fname = check_file(fname, part_char[4], ctr)          # TODO: Fix. It should work anyway because the date stamp is in the filename
                                                                   # so it's basically impossible there will be an overlap.
            complete = part_char[4] + "/data/" + fname
            #complete = part_char[4] + "\\data\\" + fname

            return complete



        def check_file(filename, cwd, ctr):                     # this works but make it nicer so it adds up files together in a nicer way
            for file in os.listdir(cwd):
                if file.endswith('.txt'):
                    if file != filename:                                                       # if a file doesnt exist just return the fname
                        return filename
                    else:
                        tmp = file.split('_')
                        tmp[1] = tmp[1] + '_' + str(ctr)                                      # our new sub_id is now id_ctr
                        ctr += 1                                                               # increment for recursivity
                        filename = '_'.join(tmp)                                               # rename the file
                        check_file(filename, cwd, ctr)


        # function that finds the correct age bracket
        def find_age_bracket(part_year, part_month, age_list, part_type):
            corr_brack = ''
            for bracket in age_list:
                if part_type == 2:
                    split_bracket = bracket.split('-')
                    lb, ub = split_bracket[0].split(':'), split_bracket[1].split(':')         # split into upper and lower
                    lyr, lmth, uyr, umth = int(lb[0]), int(lb[1]), int(ub[0]), int(ub[1])    # index years - 0, and months - 1
                else:
                    bound = bracket.split('-')
                    lyr, uyr = int(bound[0]), int(bound[1])                                   # split into upper and lower
                if part_type == 2:
                    try:
                        if (lyr <= part_year <= uyr) and (lmth <= part_month <= umth):
                            corr_brack = bracket                                                # this means the participant falls into this bracket
                            break
                    except:
                        pass
                else:
                    try:
                        if (lyr <= part_year <= uyr):
                            corr_brack = bracket
                            break
                    except:
                        pass
            if corr_brack == '':
                    print("The subject is either too young or too old")
            return corr_brack

        def get_juice_name(info):
            if info == 0:
                juice_type = "apple"
            elif info == 1:
                juice_type = "orange"
            elif info == 2:
                juice_type = "pineapple"

            return juice_type


        def get_juice_pump(info):
            juice_id = ''
            juice_vol = ''
            if info == 'apple':
                juice_id = '\1'
                juice_vol = '\13'
            elif info == 'orange':
                juice_id = '\2'
                juice_vol = '\14'
            elif info == 'pineapple':
                juice_id = '\3'
                juice_vol = '\15'
            print(juice_id, juice_vol)
            return [juice_id, juice_vol]


        def decode_gustaf(dev_name):
            tmp = dev_name.readlines()[0]                                                        # takes the string out

            try:
                pump_nr, pump_times, vol = int(tmp[0].encode('hex'), 16), int(tmp[1].encode('hex'), 16), int(tmp[2].encode('hex'), 16)*100
            except:
                print("Something went wrong {}".format(tmp))
                pump_nr, pump_times, vol = -1, -1, -1
                pass

            return [pump_nr, pump_times, vol]


        def save_juice_eval(part_char, container):

            struct_1 = ''
            struct_2 = ''

            complete = set_filename(part_char, 'ev_juice(juice_salience.csv)')
            ev_juice_data = open(complete, 'w')

            tmp_len = len(container['apple']) + 1                        # for 3 questions. we want nice naming not indexing
                                                                          # the key indexed doesnt matter because its the same for all
            for i in range(1, tmp_len):
                struct_1 += "question" + str(i) + "\t"

            struct_1 += "act_pump\tact_pump_nr\tact_vol\tsub_id\n"

            ev_juice_data.write(struct_1)

            for i in range(0, tmp_len - 1):                              # we can just take the length of one of the keys because
                struct_2 += "{}\t"                                        # all of them have the same length

            struct_2 += "{}\t{}\t{}\t{}\n"                                # for pump, volume, and subid


            for el  in container.keys():

                tmp_list = container[el]
                tmp_list.sort(key=lambda x: x[1])
                tmp = [tmp_list[0][2], tmp_list[0][3], tmp_list[0][4]]  # this is equivalent to pump_nr, pump_times and vol
                tmp_list = [tl[0] for tl in tmp_list]                    # take just the responses
                for el in tmp:
                    tmp_list.append(el)
                tmp_list.append(part_char[1])                             # add sub_id

                                                                          # we want to store the responses as an integers
                ev_juice_data.write(struct_2.format(int(tmp_list[0]), int(tmp_list[1]), int(tmp_list[2]), tmp_list[3],
                                             tmp_list[4], tmp_list[5], tmp_list[6]))

            ev_juice_data.close()
            print("Successfully saved the juice evaluation dataset.")



        def determine_sequence(type, case, ender):

            if type == 1:
                if case == 'beg':
                    run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0
                elif case == 'rew':
                    run_rew, run_ev, run_effort, run_go = 0, 1, 0, 0
                elif case == 'ev':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 76, 0           # effort should be at 76 repetitions to account for
                elif case == 'eff':                                             # 72 real trials + 4 practice trials
                    run_rew, run_ev, run_effort, run_go = 0, 0, 0, 1
                elif case == 'go':
                    if ender:
                        run_rew, run_ev, run_effort, run_go = 0, 0, 0, 0
                    else:
                        run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0

            if type == 2:
                if case == 'beg':
                    run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0
                elif case == 'rew':
                    run_rew, run_ev, run_effort, run_go = 0, 1, 0, 0
                elif case == 'ev':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 0, 1
                elif case == 'eff':
                    if ender:
                        run_rew, run_ev, run_effort, run_go = 0, 0, 0, 0
                    else:
                        run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0

                elif case == 'go':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 76, 0

            if type == 3:
                if case == 'beg':
                    run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0
                elif case == 'rew':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 76, 0
                elif case == 'ev':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 0, 1
                elif case == 'eff':
                    run_rew, run_ev, run_effort, run_go = 0, 1, 0, 0
                elif case == 'go':
                    if ender:
                        run_rew, run_ev, run_effort, run_go = 0, 0, 0, 0
                    else:
                        run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0

            if type == 4:
                if case == 'beg':
                    run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0
                elif case == 'rew':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 76, 0
                elif case == 'ev':
                    if ender:
                        run_rew, run_ev, run_effort, run_go = 0, 0, 0, 0
                    else:
                        run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0

                elif case == 'eff':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 0, 1
                elif case == 'go':
                    run_rew, run_ev, run_effort, run_go = 0, 1, 0, 0

            if type == 5:
                if case == 'beg':
                    run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0
                elif case == 'rew':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 0, 1
                elif case == 'ev':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 76, 0
                elif case == 'eff':
                    if ender:
                        run_rew, run_ev, run_effort, run_go = 0, 0, 0, 0
                    else:
                        run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0
                elif case == 'go':
                    run_rew, run_ev, run_effort, run_go = 0, 1, 0, 0

            if type == 6:
                if case == 'beg':
                    run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0
                elif case == 'rew':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 0, 1
                elif case == 'ev':
                    if ender:
                        run_rew, run_ev, run_effort, run_go = 0, 0, 0, 0
                    else:
                        run_rew, run_ev, run_effort, run_go = 1, 0, 0, 0

                elif case == 'eff':
                    run_rew, run_ev, run_effort, run_go = 0, 1, 0, 0
                elif case == 'go':
                    run_rew, run_ev, run_effort, run_go = 0, 0, 76, 0


            return [run_rew, run_ev, run_effort, run_go]


        def get_mouse_coord(inp):
            x, y = inp.getPos()[0], inp.getPos()[1]
            return [x, y]


        def evaluate_coordinates(fromx, tox, fromy, toy, actx, acty):
            return (fromx < actx <= tox and fromy < acty <= toy)


        def get_mouse_choice_complex(act_x, act_y, list_inp1, list_inp2, type, door1, chest1):
            chosen_option = [gen_stim_path('empty'), gen_stim_path('empty'), 0]            # empty is the name of the image we are going to present by default

            from_x1, to_x1, from_y1, to_y1 = list_inp1
            from_x2, to_x2, from_y2, to_y2 = list_inp2

            if evaluate_coordinates(from_x1, to_x1, from_y1, to_y1, act_x, act_y) and type == 1:
                chosen_option = [door1, chest1, 1]                     # option will be selected with an additional bit of information that the right thing was selected

            elif evaluate_coordinates(-to_x1, -from_x1, from_y1, to_y1, act_x, act_y) and type == 2:
                chosen_option = [door1, chest1, 1]

            if evaluate_coordinates(from_x2, to_x2, from_y2, to_y2, act_x, act_y)  and type == 1:
                chosen_option[2] = 1

            elif evaluate_coordinates(-to_x2, -from_x2, from_y2, to_y2, act_x, act_y) and type == 2:
                chosen_option[2] = 1

            return chosen_option


        def get_mouse_choice_simple(x, y, from_X, to_x, from_y, to_y, inp):
                if evaluate_coordinates(from_X, to_x, from_y, to_y, x, y):
                    return inp
                else:
                    return 9

        def remove_stim_path(inp):
            return inp.split('/')[1].split('.')[0]

        def get_stim_paths(list_inp):

            tmp_list = []

            for inp in list_inp:
                tmp_list.append(gen_stim_path(inp))

            return tmp_list

        def juice_out(part_char, stor_jui_eval, fav_juice):

            save_juice_eval(part_char, stor_jui_eval)
            out_pump, out_pumpid = get_juice_pump(fav_juice)
            out_path = gen_stim_path(fav_juice)

            tmp_list = [out_pump, out_pumpid, out_path]

            return tmp_list


        def turn_on_tutorial():
            lh = 0.1
            opac = 1
            return [lh, opac]

        def turn_off_tutorial():
            lh = 0.000001
            opac = 0
            return [lh, opac]

        def stop_instructions(trial, limit, run_instructions):
            runner = 1

            trial, runner = stop_sequence(trial, limit, runner)

            if not runner:
                run_instructions = 0
                trial  = 0

            trial += 1

            tmp_list = [trial, run_instructions]

            return tmp_list

        def is_trial(trial, trial_list):
            return any([1 for el in trial_list if el == trial])


        ################################################################################################
        ################################# defining basic variables #####################################
        ################################################################################################

        matrix_trial = 1                                  # current trial within the matrix sequence
        ev_trial = 1                                      # explicit evaluation trial
        eff_trial = 1                                     # hypothetical effort trial
        go_trial = 1
        juice_trial = 1                                   # runner within the initial juice determination
        close_ev = 0
        cog_eff_trial = 1
        nfc_trial = 0

        go_switch = 0                                     # number of switches for the real announcement
        eff_switch = 0
        ev_switch = 0
        num_trials = 528                                  # needs to be 528. will decide on the absolute number of trials / this subsumes eff and ev and is akin to abs_trial
        num_eff_trials = 144                               # 6 (rew) * 4 (diff) * 3 (repeated) should be 144

        halfway_go = int(round(num_trials/2))
        halfway_eff = int(round(num_eff_trials/2))


        run_rew = 1
        run_ev = 1
        run_effort = 1
        run_go = 1


        run_nasa = 1                                            # runs the nasa questions
        run_fin_eff = 2                                         # run the final cog eff sequence at all
        run_prac = 1                                            # used to run either practice or real trials
        run_matrix = 1                                          # current row that is being pulled for the image in the matrix trial
        run_dispenser = 1                                       # run juice dispenser in init_q
        run_water = 0                                           # run the water dispenser
        run_correct = 0                                         # run matrix reevaluation or not
        run_pr = 0                                              # run practice | delete?
        run_transition = 1                                      # run transition from one task to other
        run_real = 0                                            # used to run either practice or real trials
        run_juice_reeval = 0                                    # used to run juice reevaluation
        run_est_sal = 100
        run_effort_midway = 0
        run_pause = 0
        run_fin_eff_tr = 1

        tutorial_opac = 0

        # instruction runners
        run_begin_instr = 100
        run_est_sal_instr = 100
        run_rew_instr = 100
        run_ev_instr = 100
        run_eff_instr_mini = 100
        run_eff_instr = 100
        run_go_instr = 100
        run_cog_eff_instr = 100

        begin_instr_trial = 1
        est_sal_trial = 1
        rew_instr_trial = 1
        ev_instr_trial = 1
        eff_instr_trial = 1
        go_instr_trial = 1
        cog_eff_instr_trial = 1

        num_pauses = 4                                     # defines number of breaks | shouldnt be zero. should be 4
        block_length = num_trials/num_pauses               # defines block length for gng task

        already_switched = 0                              # helper variable used in the matrix evaluation procedure
        reverse_corrected = 0                             # was the reverse correcetd (e.g. by 1 1)
        initiate_reverse = 0                              # initiate reverse sequence in WASI?

        responded_correctly = 0                           # was the response correct or not in the matrix case

        indx = 0                                          # indexing the item
        diagnostics_info = ''                             # diagnostics string
        ctr = 1                                           # used in the pump volume evaluation

        pump = ''

        cum_juice = 0
        cum_amount = 0
        turn_off = 0                                        # to not check for reverse correction every time
        initial_q = ''                                      # variable for initial questions that determine a participants state
        failed_seq = 0                                      # type of sequence failure in case an individual failed the first matrix reasoning trials

        juices = ['apple', 'orange', 'pineapple']

        # always remember to clean after use
        ################################################################################################
        ################################# generic helper variables #####################################
        ################################################################################################

        tmp_val = 0
        tmp = 0                                                # generic helper variable
        tmp_list = []                                          # generic helper list
        tmp_dict = collections.defaultdict()                   # generic helper dict
        tmp_design_matrix = []                                 # this is a special case that doesn't need to be deleted
        tmp_evaluater = []                                     # list used for evaluating
                                                               # matrix reasoning correctness
        tmp_str = ''
        tmp_rt = [0.38] # we initialize with a sensible value that will get removed afterwards
                         # for children we should use  0.671. These values are based on Brydges et al 2012 and 2013
                         # for adults a total of both studies was used for congr

        tmp_runner = 100
        struct_1 = ''                                          # generic helper variables
        struct_2 = ''
        tmp_trial = 1                                          # tmp trial is used as a helper counter in various places

        response = ''                                          # key used for obtaining the final response from the participants

        ################################################################################################
        ################################# creating containers ##########################################
        ################################################################################################

        primary, secondary = [], []
        pump_vol = {}
        stor_ev = collections.defaultdict()
        stor_eff = []
        stor_go = []
        pump_vol = {}                                          # this gives us a clear mapping between volume and commands to send
        stor_init_q = []
        stor_pic_q = []
        stor_nasa_q = []
        stor_jui_eval = collections.defaultdict()
        stor_jui_eval = fill_keys(stor_jui_eval, juices)
        stor_matrix_ans = {}
        stor_aux_ans = []
        stor_nfc_q = []

        ################################################################################################
        ################################# MR containers ################################################
        ################################################################################################

        # t score containers
        t_1 = [20, 22, 23, 25, 27, 29, 31, 33, 34, 36, 38, 40, 42, 44, 46, 48, 51, 53, 55, 57, 59, 62, 65, 68, 72, 76, 79, 80, 80, 80, 80]
        t_2 = [20, 21, 22, 24, 26, 28, 30, 32, 33, 35, 37, 39, 41, 43, 45, 47, 50, 52, 54, 56, 58, 61, 64, 67, 71, 75, 78, 80, 80, 80, 80]
        t_3 = [20, 21, 22, 24, 26, 28, 30, 32, 33, 35, 37, 39, 40, 42, 45, 46, 49, 51, 53, 55, 57, 60, 63, 66, 70, 74, 78, 80, 80, 80, 80]
        t_4 = [20, 20, 21, 23, 25, 27, 29, 31, 32, 34, 36, 38, 40, 42, 44, 46, 49, 51, 53, 55, 57, 60, 63, 66, 70, 74, 77, 80, 80, 80, 80]
        t_5 = [20, 20, 21, 23, 25, 27, 29, 31, 32, 34, 36, 38, 40, 42, 44, 46, 48, 50, 52, 54, 56, 59, 62, 65, 69, 73, 77, 80, 80, 80, 80]
        t_6 = [20, 20, 21, 23, 25, 27, 29, 30, 32, 33, 35, 37, 39, 41, 43, 45, 47, 49, 52, 54, 56, 58, 61, 65, 69, 73, 77, 80, 80, 80, 80]
        t_7 = [20, 20, 21, 23, 24, 26, 28, 30, 31, 33, 35, 37, 39, 41, 43, 45, 47, 49, 51, 53, 55, 58, 61, 64, 68, 72, 76, 79, 80, 80, 80]
        t_8 = [20, 20, 21, 23, 24, 26, 28, 29, 31, 32, 34, 36, 38, 40, 42, 44, 46, 48, 51, 53, 55, 57, 60, 64, 68, 72, 76, 79, 80, 80, 80]
        t_9 = [20, 20, 21, 23, 24, 26, 27, 29, 30, 32, 34, 36, 38, 40, 42, 43, 45, 47, 50, 52, 54, 56, 59, 63, 67, 71, 75, 78, 80, 80, 80]
        t_10 = [20, 20, 20, 22, 23, 25, 27, 28, 30, 31, 33, 35, 37, 39, 41, 43, 45, 47, 50, 52, 54, 56, 59, 63, 67, 71, 75, 78, 80, 80, 80]

        t_11 = [20, 20, 20, 20, 20, 21, 22, 24, 25, 27, 28, 30, 32, 34, 36, 38, 40, 42, 44, 46, 49, 51, 53, 55, 58, 62, 68, 73, 76, 79, 80]
        t_12 = [20, 20, 20, 20, 20, 21, 22, 24, 25, 27, 28, 30, 32, 34, 36, 38, 40, 42, 44, 46, 48, 50, 52, 54, 57, 61, 66, 71, 75, 78, 80]
        t_13 = [20, 20, 20, 20, 20, 21, 22, 24, 25, 27, 28, 30, 32, 34, 36, 38, 40, 42, 44, 46, 48, 50, 52, 54, 57, 60, 64, 69, 73, 77, 80]

        age_adults = ['17-19', '20-24', '25-29']

        age_children = ['9:0-9:3', '9:4-9:7', '9:8-9:11', '10:0-10:3', '10:4-10:7', \
                        '10:8-10:11', '11:0-11:3', '11:4-11:7', '11:8-11:11', '12:0-12:3']


        matrix_reason = {}
        matrix_reason['adult'] = {}
        matrix_reason['child'] = {}

        matrix_reason['adult']['17-19'] = {}
        matrix_reason['adult']['20-24'] = {}
        matrix_reason['adult']['25-29'] = {}
        matrix_reason['child']['9:0-9:3'] = {}
        matrix_reason['child']['9:4-9:7'] = {}
        matrix_reason['child']['9:8-9:11'] = {}
        matrix_reason['child']['10:0-10:3'] = {}
        matrix_reason['child']['10:4-10:7'] = {}
        matrix_reason['child']['10:8-10:11'] = {}
        matrix_reason['child']['11:0-11:3'] = {}
        matrix_reason['child']['11:4-11:7'] = {}
        matrix_reason['child']['11:8-11:11'] = {}
        matrix_reason['child']['12:0-12:3'] = {}



        for i in range(1, 31):
            str_i = str(i)
            matrix_reason['adult']['17-19'][str_i] = t_11[i]
            matrix_reason['adult']['20-24'][str_i]  = t_12[i]
            matrix_reason['adult']['25-29'][str_i]  = t_13[i]
            matrix_reason['child']['9:0-9:3'][str_i]  = t_1[i]
            matrix_reason['child']['9:4-9:7'][str_i]  = t_2[i]
            matrix_reason['child']['9:8-9:11'][str_i]  = t_3[i]
            matrix_reason['child']['10:0-10:3'][str_i]  = t_4[i]
            matrix_reason['child']['10:4-10:7'][str_i]  = t_5[i]
            matrix_reason['child']['10:8-10:11'][str_i]  = t_6[i]
            matrix_reason['child']['11:0-11:3'][str_i]  = t_7[i]
            matrix_reason['child']['11:4-11:7'][str_i]  = t_8[i]
            matrix_reason['child']['11:8-11:11'][str_i]  = t_9[i]
            matrix_reason['child']['12:0-12:3'][str_i]  = t_10[i]


        stim_corr_ans = [2, 3, 2, 1, 3, 1, 5, 1, 3, 3, 4, 2, 3, 4, 1, 4, \
                         2, 5, 4, 2, 4, 2, 3, 3, 1, 4, 4, 2, 5, 5, 1, 2]

        stim_list = ['stimuli/Sample Item A-1.png', 'stimuli/Sample Item B-1.png']     # generate a second stimuli list

        last_matrix = 'stimuli/Item30-1.png'                   # last matrix

        for i in range(1, 31):
            if i < 10:
                stim_file = 'stimuli/Item0' + str(i) + '-1.png'
            else:
                stim_file = 'stimuli/Item' + str(i) + '-1.png'
            stim_list.append(stim_file)

                                                                                        # this is important for the saving portion
        tmp_list = 30*[None]                                                            # generate empty list with all responses

        for i in range(0, 30):                                                         # populate with 0s
            if i < 5:
                tmp_list[i] = 1                                                         # populating with 1s saves trouble later
            else:                                                                       # because we assume people won't be incorrect there
                tmp_list[i] = 0


        ################################################################################################
        ################################ pump related information ######################################
        ################################################################################################


        pump_selecter = ['\13', '\14', '\15', '\16']                                   # clear mapping to make sure we know how much to send
        pumps = ['\1', '\2', '\3']

        stringed_ctr = str(ctr)
        for vol in range(100, 5100, 100):
            while stringed_ctr[-1] == '8' or stringed_ctr[-1] == '9':                # this might not be needed if we have fixed
                ctr += 1                                                               # quantities of juice being squirted
                stringed_ctr = str(ctr)
            else:
                pump_vol[str(vol)] = ctr
                ctr += 1
                stringed_ctr = str(ctr)

        for el in pumps:                                    # we preconfigure our container to be a list for each pump
            jui = str(int(el.encode('hex'), 16))
            stor_jui_eval[jui] = []

        background_image = visual.ImageStim(win=win, image = 'stimuli/background_f.png')      # add nice background


        act_pump = 0
        act_pump_nr = 0
        act_vol = 0
        ################################################################################################
        ################################# go no go #####################################################
        ################################################################################################

        obtained_rew = 0
        base_rew = 0.10
        cue_time = 0.3                                                  # cue timing denotes how long the flanker go are presented
        resp_wind = 0.5                                                 # resp window denotes the length of the response window

        vol = 1

        left_resp = 'f'                                                 # response options
        right_resp = 'k'

        juice_rew = 'primary'
        pound_rew = 'secondary'


        ################################################################################################
        ################################# cog efff #####################################################
        ################################################################################################

        chanc = 0.3
      Begin Routine:
        win.mouseVisible = False


        exp_name = str(expName)                                 # open datafile in the beginning
        sub_id = get_input_box(expInfo, 'participant', 2)       # participant id
        dat = get_input_box(expInfo, 'date', 2)                 # date
        part_age = get_input_box(expInfo, 'age', 2)             # computes age to know which t-scores to look (yyyy-mm-dd)
        participant_type = get_input_box(expInfo, 'sample', 1)  # sample 1 - adult, 2 - child
        type = get_input_box(expInfo, 'type', 1)                # type leads to the 6 variants of this task.
        run_debug = get_input_box(expInfo, 'run_first', 1)      # just for debugging purposes
        run_all = get_input_box(expInfo, 'run_second', 1)          # runs main part
        reinforcer_type = get_input_box(expInfo, 're_o', 1)     # tells us if we start with primary or secondary (1 - primary, 2- secondary)
                                                                # 1 - we start with primary and go to secondary, 2 - we start with secondary
        chance_level = 0.5

        cwd = os.getcwd()                                       # get current working directory

        participant_file = get_input_box(expInfo, 'participant', 2)
        participant_file = cwd + '/trial_gen/part_' + participant_file + '.csv'


        if random.random () > chance_level:                      # key mapping for cog eff (1 - left yes right no, 2 - right yes, left no)
            yes = (-0.2, -0.4)
            no = (0.2, -0.4)
            key_position = 1
        else:
            yes = (0.2, -0.4)
            no = (-0.2, -0.4)
            key_position = 2

        part_age = [int(el) for el in part_age.split('-')]
        part_age = datetime(part_age[0], part_age[1], part_age[2])

        today = [int(el) for el in str(date.today()).split('-')]
        today = datetime(today[0], today[1], today[2])

        diff = relativedelta.relativedelta(today, part_age)
        part_year = diff.years
        part_month = diff.months

        if participant_type == 1:
            participant_age = find_age_bracket(part_year, part_month, age_adults, participant_type)
            participant_type = 'adult'                          # rename for dict purposes
        else:
            participant_age = find_age_bracket(part_year, part_month, age_children, participant_type)
            participant_type = 'child'

        go_pract = get_input_box(expInfo, 'go_pract', 1)     # number of practice trials | default is 12
        eff_pract = get_input_box(expInfo, 'eff_pract', 1)

        out_type = str(type)                                   # we do this to avoid issues with reconverting type over and over

        if random.random () > chance_level:
            run_pic_eval_b = 1#
            run_pic_eval_e = 0
        else:
            run_pic_eval_e = 0
            run_pic_eval_b = 1


        part_char = [exp_name, sub_id, out_type, dat, cwd]


        compl_go = set_filename(part_char, 'go')              # filename
        compl_ev = set_filename(part_char, 'ev')              # filename


        go_f = open(compl_go, 'w')                           # open a text file
        ev_f= open(compl_ev, 'w')

                                                                # in the first row we save header columns | add the others later

        go_f.write('trial \t reinforcer \t reward_size \t difficulty \t direction \t condition \t response \t rt \t cum_money \t cum_juice \t sub_id \t pump \t pump_vol \t pump_times\n')
        ev_f.write('trial \t quest1 \t quest1rt \t quest2 \t quest2rt \t quest3 \t quest3rt \t reinforcer \t sub_id \n')



        gust_connected = get_input_box(expInfo, 'g_conn', 1)    # connection is set at 1 as default, meaning the below if evaluates
                                                                # this is mostly a debugging aspect

        if gust_connected:                                      # if we want to connect the gustatory device

            timeout = 0                                         # set up gustaf connection parameters
            params = {
                'timeout'  : timeout,
                'baudrate' : 19200,
                'bytesize' : serial.EIGHTBITS,
                'parity'   : serial.PARITY_NONE,
                'stopbits' : serial.STOPBITS_ONE,
            }

            dev = serial.Serial('COM3', **params)   # if the gusto does not work you might need to change the COM number. The fastest way to check this is
                                                    # to go into PresentationTM -> settings -> ports -> inputs and check which are offered. Most often it should
                                                    # be between COM1 to COM6 or something similar.

                                                     # Keep in mind there should be at least a 10ms difference
                                                     # between changing amount of juice and the actual squirting
                                                     # sequence itself.
            dev.write('\13') # write to pump 1
            core.wait(0.1)
            dev.write('\74') # set 5ml for tasting
            core.wait(0.1)
            dev.write('\14') # write to pump 2
            core.wait(0.1)
            dev.write('\74') # set 5ml for tasting
            core.wait(0.1)
            dev.write('\15') # write to pump 3
            core.wait(0.1)
            dev.write('\74') # set 5ml for tasting
            core.wait(0.1)
            dev.write('\16') # write to water
            core.wait(0.1)
            dev.write('\62') # give them 5ml of water to rinse
            core.wait(0.1)


            if(dev.isOpen() == False):              # safety feature to make sure port is open
                dev.open()
      End Routine:
        # if something goes wrong, you can eliminate individual parts of the experiment
        #run_debug = 0
        #run_begin_instr = 0
        #run_rew = 0
        #run_effort = 0
        #run_ev = 0
        #run_fin_eff = 0
        #run_all = 1
        #run_matrix = 0
        #run_est_sal = 1
        #run_juice_reeval = 1
        #run_cog_eff_instr = 1
        #run_fin_eff = 1
        #run_eff_tr = 0

        run_last = 0  # this should only be on if the main task crashed and you want
                  # to run only the selection of picture sequencs in the end


        if not run_last:                                            # so it doesn't crash.
            compl_eff = set_filename(part_char, 'eff')              # filename
            eff_f = open(compl_eff, 'w')
            eff_f.write('trial \t reinforcer \t reward_size \t difficulty \t choice \t rt \t sub_id \n')



        all_trials = []

        try:
            part_file = 'trial_gen/part_' + sub_id + '.csv'

            with open(part_file, 'r') as f:
                raw_trial_data = f.readlines()
                print(raw_trial_data)


            for trial in raw_trial_data[1:]: # remove the header
            # trial, reinforcer, reward_size, difficulty, position, trial_type, stimulus, correct_resp
                tr, rf, rs, df, ps, tt, st, cr = trial.split(',')
                cr = cr.split('\n')[0] # remove the newline
                all_trials.append([tr, rf, rs, df, ps, tt, st, cr])

            print("Correctly extracted participant data")


        except ValueError:
                print("Couldn't open the participant file, check what's up with this.")
    TextComponent text_7
      color = black
      text = Welcome to the experiment! We kindly ask you to turn off your phone and put it in your bag/on the chair behind you. If your phone is turned on, it will interfere with the signal and cause data loss for us. 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_9
      color = black
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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  Routine instr2
    CodeComponent code_36
      Code Type = Py
      Begin Routine:
        win.setColor('white')

        imgs_main = ["empty", \
                      "empty", \
                      "empty", \
                      "empty", \
                      "empty", \
                      "empty", \
                      "empty", \
                      "empty", \
                      "Sample_Upper", \
                      "Sample_Highlight", \
                      "Sample Item A-1_modif", \
                      "empty", \
                      "empty", \
                      "empty"]


        texts_main = ["This experiment is composed of two parts!", \
                       "In the first part, we want to find out a few things about you.", \
                       "In the second part, you will get to play a couple of games for different rewards!", \
                       "All the games in the second part will be explained to you and will have a tutorial.", \
                       "The experimenter will also stay inside the room to ensure you understood all the objectives.", \
                       "The games you will play are easy to understand and we will let you familiarise yourself with them first.", \
                       "However, if you will have any questions during the explanations, please do ask.", \
                       "In the first part you will see picture sequences!", \
                       "You will see a picture sequence: ", \
                       "Your goal will be to always select from five options underneath the sequence the one that logically follows in the sequence: ", \
                      "For the first two sequences, the experimenter will guide you and explain how this is done.", \
                      "You will answer the remaining ones by yourself.", \
                      "This game is not timed. However, the experimenter will let you know if you should be faster.", \
                      "Let's start!"]

        text_instr = get_current_text(texts_main, begin_instr_trial - 1)

        img_main = gen_stim_path(imgs_main[begin_instr_trial - 1])
      End Routine:
        begin_instr_trial, run_begin_instr = stop_instructions(begin_instr_trial, texts_main, run_begin_instr)

        if not run_begin_instr:
            continueRoutine = False
            trials_6.finished = True
    TextComponent text_79
      color = black
      text [set every repeat] = $text_instr
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instr_resp_2
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_80
      color = black
      text [set every repeat] = Press SPACE  to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    ImageComponent image_19
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      image [set every repeat] = $img_main
      size = (1, 1)
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  Routine part1
    CodeComponent code_39
      Code Type = Py
      Begin Routine:
        tmp_runner = 100
    TextComponent text_84
      color = black
      text = Part I: Tell us about yourself!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_87
      color = black
      text = Press SPACE to continue!    
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine rew_ann
    CodeComponent code
      Code Type = Py
      Begin Routine:
        rew_t = 5

        if trial >= halfway_go: # this only happens if the participant is halfway through
            lh, tutorial_opac = turn_off_tutorial()

        if not run_rew_instr:
            run_rew_instr = 100         # we set back to initial values
            rew_instr_trial = 1
      End Routine:
        run_rew, run_ev, run_effort, run_go = determine_sequence(type, 'rew', 0)
    TextComponent text_2
      text = You are playing for:
      stopVal [duration (s)] = $rew_t
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      color = $[1, 1, 1]
      stopVal [duration (s)] = $rew_t
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_reward
      size = (0.35, 0.5)
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    TextComponent text_125
      text = Get ready!
      stopVal [duration (s)] = 3
      startVal [time (s)] = 5
      letterHeight = 0.1
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  Routine cog_eff_instr
    CodeComponent code_34
      Code Type = Py
      Begin Routine:
        background_image.setAutoDraw(False)
        win.setColor('white')


        if run_last:
            t_values = sorted(matrix_reason[participant_type][participant_age].values())
        #    ans_sum = '26'
        #    fav_juice = 'pineapple'



            part_t = matrix_reason[participant_type][participant_age][ans_sum]

            t_modifier = 18                                                 # we arbitrarily pick a higher and lower t score value
            half_t = int(round(t_modifier/3))

            easiest = part_t - t_modifier
            easy = part_t - half_t                                          # the middle ones will be slightly below or above their performance
            medium = part_t + half_t
            high = part_t + t_modifier

            # exception handling | 80 is the max t values and 20 is the min t value
            if high > 80:
                high = 80

            if medium > 80:
                medium = 80

            if easy > 80:                   # if someone were to score all of them correct
                easy = 80

            if easiest > 80:                # if someone were to score all of them correct
                easiest = 80

            # not very probable that someone would score so low
            if easiest < 20:
                easiest = 20

            if easy < 20:
                easy = 20

            if medium < 20:
                medium = 20

            if high < 20:
                high = 20

            # we also want to make sure that none have the same t value
            # though this doesn't necessarily matter because they will only be exposed to 2 trials.

            all_t = [easiest, easy, medium, high]

            combos = list(itertools.combinations(all_t, 2))

            tmp_ctr = 0

            # now we find the t value that corresponds and/or is closest to the newly obtained modifier

            easiest = min(enumerate(t_values), key=lambda i: abs(i[1]-easiest))[1]
            easy = min(enumerate(t_values), key=lambda i: abs(i[1]-easy))[1]
            medium = min(enumerate(t_values), key=lambda i: abs(i[1]-medium))[1]
            high = min(enumerate(t_values), key=lambda i: abs(i[1]-high))[1]


            elems = [easiest, easy, medium, high]


            for key, value in matrix_reason[participant_type][participant_age].items():
                for indx, el in enumerate(elems):
                    if value == el:
                        elems[indx] = key

            # they are now saved as the number of correct items which will correspond to the
            # row they are being pulled for presentation This is only approximate because
            # obviously someone can have 1 incorrect and two further ones correct.

            # we now convert them to index numbers, to all of them we need to add +1 because we are using the generated stim list
            # to actually present the pictures. So it goes from 0 to 31, with 0 and 1 being sample items A and B

            for indx, el in enumerate(elems):
                elems[indx] = int(el) + 1


        texts_main = ["Great job so far.", \
                      "If you remember, we told you before that you would play out a few picture sequences in the end.", \
                      "The computer selected one of your choices when you were deciding for juice and one for money.", \
                      "If you decided to play in the choices that were selected, you will do so in the next game.", \
                      "This time you will not get to reconfirm your choice so make sure you answer correctly on the first try!", \
                      "If you decided to not play, you will not have to play out the picture sequence.", \
                      "Please look at the screen until you are sure you have made your choice.", \
                      "We would also ask to try and blink as little as possible while you are making your choice.", \
                      "However, you can blink when we tell you if you were correct or not!", \
                      "This is important because we will be recording with the eye tracker!", \
                      "Good luck!"]


        text_instr = get_current_text(texts_main, cog_eff_instr_trial - 1)

        if cog_eff_instr_trial == 1:
            print(os.getcwd())
            all_go = glob.glob('data/*eff.txt')
            for el in all_go:
                parsed = el.split('.')[0].split('_')[1] # take the id
                if parsed == part_char[1]: # if its the person
                    break

            primary = []
            secondary = []

            with open(el, 'r') as f:
                all_trials = f.readlines()

            for trial in all_trials[1:]:
                parsed = [el.strip() for el in trial.split('\t')]
                try:
                    relevant_data = parsed[2] + '_' + parsed[3] + '_' + parsed[4] # reward size, difficulty level, choice
                except:
                    print("This is parsed where it failed {}".format(parsed))
                if parsed[1] == 'primary':
                    primary.append('primary_' + relevant_data)
                else:
                    secondary.append('secondary_' + relevant_data)

            if random.random() < 0.5:
                first = random.choice(primary)
                second = random.choice(secondary)
            else:
                first = random.choice(secondary)
                second = random.choice(primary)

            actual = [first, second]
            decisions = [first.split('_')[3], second.split('_')[3]]

            #lowest, low, medium, high = t

            diffs = []
            rews = []

            # size, difficulty
            for tr, decision in zip(actual, decisions):
                if int(decision):
                    tr = tr.split('_')
                    rews.append(tr[0] + '_' + tr[1])
                    diffs.append(tr[2])

            difficulty_lev = transform_information(diffs, elems)            # rename the variable so we can use the diffs for presenting the image later

            if len(difficulty_lev) > 1:
                if (difficulty_lev[0] == difficulty_lev[1]):
                    if difficulty_lev[0] != 31: # largest possible index for an item in the array.
                        difficulty_lev[0] = difficulty_lev[0] + random.choice([-1, 1]) # can pick any element one above or below
                    else:
                        difficulty_lev[0] = difficulty_lev[0] -1 # if it's the last one we can only go down.

            run_fin_eff = len(difficulty_lev)                       # this way we make it run the correct number of times.
      End Routine:
        cog_eff_instr_trial, run_cog_eff_instr = stop_instructions(cog_eff_instr_trial, texts_main, run_cog_eff_instr)

        if not run_cog_eff_instr:
            continueRoutine = False
            trials_10.finished = True
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_109
      color = black
      text [set every repeat] = $text_instr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_110
      color = black
      text = Press SPACE to continue.
      pos = (0, -0.8)
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine ev_iniq
    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        initial_q = current_question

        win.mouseVisible = True
      End Routine:
        tmp_trial += 1
        row_len = 5
        stor_init_q.append([sav_mapping, rating.getRating()])

        if tmp_trial == row_len:

            complete = set_filename(part_char, 'initial_q(initial_q.csv)')
            init_q_data = open(complete, 'w')

            # order according to the first element.

            stor_init_q = sorted(stor_init_q, key=lambda x: x[0])

            for id, q in stor_init_q:
                struct_1 += "init_quest_" + str(id) + "\t"

            struct_1 += "sub_id\n"  #subid

            init_q_data.write(struct_1)

            for i in range(0, len(stor_init_q)):     # needs to be + 1 for the amount of questions we always want
                struct_2 += "{}\t"

            struct_2 += "{}\n"

            tmp_list = [el2 for el1, el2 in stor_init_q] # extract question answers
            tmp_list.append(sub_id)

            init_q_data.write(struct_2.format(tmp_list[0], tmp_list[1], tmp_list[2], tmp_list[3], tmp_list[4]))
            init_q_data.close()
            print("Successfully saved the initial evaluation dataset.")

            # clear variables
            struct_1 = ''
            struct_2 = ''
            tmp_list = []
            tmp_trial = 0
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 100
      startVal [time (s)] = 0.0
      size = 1.6
      storeRatingTime = False
      forceEndRoutine = True
      low = 0
      visualAnalogScale = True
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      customize_everything:
        size = 0.8,
        lineColor = 'black',
        stretch = 2,
        textColor = "black",
        low = 1,
        high = 100,
        mouseOnly = True,
        scale = None,
        labels = ["Not at all", "Extremely"]
    TextComponent text_44
      color = black
      text [set every repeat] = $initial_q
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine jui_fe
    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        # changes colors
        opt_1, opt_2, opt_3, opt_4, opt_5, opt_6 = color_change(juice_resp.keys, options)

        # selects correct part
        opt_1, opt_2, opt_3, opt_4, opt_5, opt_6 = opt_1[1], opt_2[1], opt_3[1], opt_4[1], opt_5[1], opt_6[1]

        if juice_trial == 1:
            run_dispenser = 0
            run_water = 0
            if gust_connected:
                act_pump, act_pump_nr, act_vol = decode_gustaf(dev)
            # water

        if juice_trial == 3:
            run_water = 1
      End Routine:
        #if juice_trial == 1:
        #    print(act_pump, act_pump_nr, act_vol)
        #    print("On trial {} and juice type {} with responses given {}".format(juice_trial, juice_type, len(tmp_list)))

        juice_type = get_juice_name(pump_indx)

        stor_jui_eval[juice_type].append([juice_resp.keys, sav_mapping, act_pump, act_pump_nr, act_vol])

        tmp_list.append(juice_resp.keys)


        juice_trial += 1
    PolygonComponent first_feedback_2
      pos = [-0.8, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_1
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent second_feedback_2
      pos = [-0.5, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_2
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent third_feedback_2
      pos = [-0.2, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_3
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent fourth_feedback_2
      pos = [0.1, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_4
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent fifth_feedback_2
      pos = [0.4, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_5
      stopVal [duration (s)] = 0.5
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent sixth_feedback_2
      pos = (0.7, -0.6)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor [set every repeat] = $opt_6
      stopVal [duration (s)] = 0.5
      lineColor = $[0, 0, 0]
      lineWidth = 10
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    TextComponent text_36
      text = 1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_37
      text = 2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_38
      text = 3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_39
      text = 4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_40
      text = 5
      stopVal [duration (s)] = 0.5
      pos [set every frame] = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_25
      text = 6
      stopVal [duration (s)] = 0.5
      pos = (0.7, -0.58)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    ImageComponent image_25
      stopVal [duration (s)] = 0.5
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_juice
      size = (0.15, 0.6)
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
  Routine tar_ann
    ImageComponent main_image
      stopVal [duration (s)] = $cue_timing
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $main_cue
      size = (217, 25)
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    KeyboardComponent main_resp
      stopVal [duration (s)] = 1
      forceEndRoutine = True
      allowedKeys = 'f', 'k'
      startVal [time (s)] = 0
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    PolygonComponent polygon_18
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      stopVal [duration (s)] = $resp_wind
      lineColor = $[1,-1, -1]
      lineWidth = 10
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    TextComponent text_102
      text = Tutorial
      stopVal [duration (s)] = $resp_wind
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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
  Routine ev_pic
    CodeComponent code_17
      Code Type = Py
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        pic_q = current_question
      End Routine:
        stor_pic_q.append([sav_mapping, rating_2.getRating()])
        tmp_trial += 1
        row_len = 4

        if tmp_trial == row_len: # end of questions about pictures

            stor_pic_q = sorted(stor_pic_q, key=lambda x: x[0])

            complete = set_filename(part_char, 'pic_q(pic_rating.csv)')
            pic_q_data = open(complete, 'w')

            for el1, el2 in stor_pic_q:
                struct_1 += "pic" + str(el1) + "\t"

            struct_1 += "sub_id\n"  #subid

            pic_q_data.write(struct_1)

            for i in range(0, len(stor_pic_q)):
                struct_2 += "{}\t"

            struct_2 += "{}\n"

            tmp_list = [el2 for el1, el2 in stor_pic_q]
            tmp_list.append(sub_id)

            pic_q_data.write(struct_2.format(tmp_list[0], tmp_list[1], tmp_list[2], tmp_list[3],
                                             tmp_list[4]))
            pic_q_data.close()
            print("Successfully saved the picture evaluation dataset.")

            struct_1 = ''
            struct_2 = ''
            tmp_list = []
            tmp_trial = 0
        #    print("this is tmp trial after ev pic {}".format(tmp_trial))
    RatingScaleComponent rating_2
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      size = 0.8
      storeRatingTime = False
      forceEndRoutine = True
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      customize_everything:
        size = 0.8,
        lineColor = 'black',
        stretch = 1.4,
        textColor = "black",
        low = 1,
        mouseOnly = True,
        high = 7,
        scale = None,
        labels = ["Extremely dislike", "Extremely like"]
    ImageComponent image_2
      pos = (0, 0.2)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $pic_q
      size = (217, 25)
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    TextComponent text_49
      color = black
      text = How much do you like this picture?
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine wat_warn
    TextComponent palate_cleanse
      color = black
      text = You will now receive water to wash out the juice!
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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
  Routine cog_eff_fin_answ
    CodeComponent code_44
      Code Type = Py
      Begin Routine:
        trig_end = curr[0] + '_7'            # trigger for end of cog eff fin

        if et_connected:
            controller.record_event(trig_end)    # trigger for begin cog eff fin




        stim_corr_ans = [2, 3, 2, 1, 3, 1, 5, 1, 3, 3, 4, 2, 3, 4, 1, 4, \
                         2, 5, 4, 2, 4, 2, 3, 3, 1, 4, 4, 2, 5, 5, 1, 2]


        corr_resp =  stim_corr_ans[difficulty_lev[cog_eff_trial - 1]] # this gets the index of the stim corr ans


        if int(cog_eff_fin_resp.keys) == int(corr_resp):
            feed = 'Correct!'
            print("Participant answered correctly for reward size: {}".format(str(fin_rew)))

        else:
            feed = 'Incorrect!'
            fin_rew = gen_stim_path('empty')
            if random.random() < chanc:
                print("Participant answered incorrectly for reward size: {} but gets the reward due to the lottery".format(str(fin_rew)))
            else:
                print("Participant answered incorrectly for reward size: {} and does not get the reward due to the lottery".format(str(fin_rew)))


        complete = set_filename(part_char, str(cog_eff_trial) + 'cog_eff_trial')
        cog_eff_q = open(complete, 'w')

        struct_1 = "reward_size\tdifficulty\tanswer\tactual_item\tsub_id\n"  #subid
        cog_eff_q.write(struct_1)
        struct_2 = "{}\t{}\{}\t{}\t{}\n"
        tmp_list = [fin_rew, fin_diff, feed, difficulty_lev[cog_eff_trial - 1], sub_id]
        cog_eff_q .write(struct_2.format(tmp_list[0], tmp_list[1], tmp_list[2], tmp_list[3],
                                             tmp_list[4]))
        cog_eff_q.close()
        print("Successfully saved the cog eff dataset.")
      End Routine:
        cog_eff_trial += 1
    TextComponent text_98
      color = black
      text [set every repeat] = $feed
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine est_sal
    CodeComponent code_38
      Code Type = Py
      Begin Routine:
        texts_main = ["We mentioned that you will be playing for rewards in the second part.", \
                      "If you will do well, you will be rewarded for your score.", \
                      "There will be two types of rewards - juice and money.", \
                      "We will always tell you what reward you will be playing for.", \
                      "We now want to make sure, that you will be playing for a juice you like!", \
                      "That is why you will now get to taste several juices.", \
                      "After you obtain each juice, we would like you to rate it.", \
                      "By telling us which one you like the most...", \
                      "We will be able to give you that one as a reward later!"]


        text_instr = get_current_text(texts_main, est_sal_trial - 1)
      End Routine:
        est_sal_trial, run_est_sal = stop_instructions(est_sal_trial, texts_main, run_est_sal)

        if not run_est_sal:
            continueRoutine = False
            trials_9.finished = True

        win.mouseVisible = False
    TextComponent text_24
      color = black
      text [set every repeat] = $text_instr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = black
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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
  Routine jui_out
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        tmp_list = []

        # maybe worthwhile checking out where those numbers come from
        stor_jui_eval = dd = {k:v for k, v in zip(stor_jui_eval.keys(), stor_jui_eval.values()) if len(v)}

        for key, values in zip(stor_jui_eval.keys(), stor_jui_eval.values()):
            tmp_val = 0
            for value in values:
                tmp_val += int(value[0]) # we take the first value because that denotes the response
            tmp_len = len(stor_jui_eval[key])
            tmp_list.append((key, tmp_val/tmp_len)) # we get the mean (we ask them 3 questions)

        # picks the max and if there's more than one it picks one randomly
        # we then later ask to reconfirm their favourite juice
        #print("these are the juice mean values {}".format(tmp_list))

        fav_juice = max(tmp_list, key=lambda item:item[1])[0] # take the max

        fav_juice_path = gen_stim_path(fav_juice)

        tmp_val = 0
        tmp_len = 0
        tmp_list = []
      End Routine:
        if juice_conf.keys == 'y':
            run_juice_reeval = 0

            fav_juice_pump, fav_juice_pumpid, fav_juice_path = juice_out(part_char, stor_jui_eval, fav_juice)

        else:
            run_juice_reeval = 1
    TextComponent fav_juice_t
      color = black
      text = Your favourite juice was:
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent juice_conf
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 1
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    TextComponent conf_prompt
      color = black
      text = Please confirm by pressing "y" if this is correct or "n" if you want to choose another one.
      pos = (0, -0.4)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    ImageComponent fav_juice_pic
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      image [set every repeat] = $fav_juice_path
      size = (0.2, 0.6)
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  Routine rew_expl
    CodeComponent code_27
      Code Type = Py
      Begin Experiment:
        lh = 0.000001
        past_first = 0
      Begin Routine:
        texts_main_1_1 = ["If you remember, in the first part we said you will be rewarded for your score!", \
                      "That's why we wanted to know what your favourite juice is.", \
                      "Now, you will be rewarded with that juice if you do well!", \
                      "To make it really clear, you will see an image of a juice carton.", \
                      "This means your reward will be juice. An example will be shown soon.", \
                      "Every time you see the word 'tutorial' in a red frame like in the upper left corner...", \
                      "You know that the screen you are seeing is part of the tutorial.", \
                      "If you do not see that screen it means, it is the real game!", \
                      "We will also let you know to make sure you understand the real game has started!"]

        # second half
        texts_main_1_2 = ["Great, you are now halfway through the games!", \
                          "In the beginning we said you would be rewarded for your score.", \
                          "But juice is not the only type of reward we have in store for you.", \
                          "To make it more fun, you can also earn money if your score will be good.", \
                          "In the second half you will therefore earn money if you do well!", \
                          "On the next screen you will be shown a symbol of a pound.", \
                          "That is the reward you will get for the rest of the games!"]


        texts_main_2_1 = ["If you remember, in the first part we said you will be rewarded for your score!", \
                        "Now, you will be able to earn money if your score will be good!", \
                        "To make it really clear, you will see a symbol of a pound.", \
                        "This means your reward will be money. An example will be shown soon.", \
                        "Every time you see the word 'tutorial' in a red frame like in the upper left corner...", \
                        "You know that the screen you are seeing is part of the tutorial.", \
                        "If you do not see that screen it means, you are playing the real game!", \
                        "We will also let you know to make sure you understand the real game has started!"]

        # second half
        texts_main_2_2 = ["Great, you are now halfway through the games!", \
                      "In the beginning we said you would be rewarded for your score.", \
                      "But money is not the only type of reward we have in store for you.", \
                      "That's why we wanted to know what your favourite juice is.", \
                      "To make it more fun, in this part your reward will be your favourite juice!." \
                      "In the second half you will therefore earn juice if you do well!", \
                      "On the next screen you will be shown an image of a juice carton.", \
                      "That is the reward you will get for the rest of the games!"]

        present_tutorial = 6
        if rew_instr_trial == present_tutorial:                # this is the trial where we want to start presenting the tutorial sign
            lh, tutorial_opac = turn_on_tutorial()

        if reinforcer_type == 1:
            texts_main = texts_main_1_1
            curr_reward = gen_stim_path('juice')

        elif reinforcer_type == 1 and (trial >= block_length + num_pract):
            curr_reward = gen_stim_path('pound')
            texts_main = texts_main_1_2

        elif reinforcer_type == 2:
            texts_main = texts_main_2_1
            curr_reward = gen_stim_path('pound')

        elif reinforcer_type == 2 and (trial >= block_length + num_pract):
            texts_main = texts_main_2_2
            curr_reward = gen_stim_path('juice')



        text_rew = texts_main[rew_instr_trial - 1]
      End Routine:
        rew_instr_trial, run_rew_instr = stop_instructions(rew_instr_trial, texts_main, run_rew_instr)

        if not run_rew_instr:
            continueRoutine = False
            trials_2.finished = True
    TextComponent text_41
      text [set every repeat] = $text_rew
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instr_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_42
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 2
      letterHeight = 0.1
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    TextComponent text_82
      opacity [set every repeat] = $tutorial_opac
      text = Tutorial
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    PolygonComponent polygon_6
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      lineColor = $[1, -1, -1]
      lineWidth = 10
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  Routine jui_warn
    TextComponent text_88
      color = black
      text = You will now receive juice!
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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
  Routine final_screen
    TextComponent text_48
      color = black
      text = That was all, a final short questionnaire will pop up shortly!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_48
      Code Type = Py
      End Routine:
        webbrowser.open('https://goo.gl/forms/EaxCPlk5kK5KWKxC2')
  Routine go_expl3
    TextComponent text_106
      text = Let's practice!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine transition2
    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        time.sleep(0.5)
        background_image.setAutoDraw(True)
        # if something goes wrong, her you can enter the juice information
        #fav_juice =  'pineapple'
        #fav_juice_pump =  '\3'
        #fav_juice_pumpid =  '\15'
        #run_rew = 0
        #run_ev = 0
        #run_eff = 0
    TextComponent text_73
      text = Part II: Get ready for the games!
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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  Routine transition3
    CodeComponent code_46
      Code Type = Py
      End Routine:
        run_transition = 0
    TextComponent text_43
      text = Let's continue with the next game!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_16
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_121
      text = Press SPACE to continue.
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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
  Routine juice_eval
    CodeComponent code_18
      Code Type = Py
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        if et_connected:
            controller.unsubscribe()
            controller.close_datafile()
      End Routine:
        complete = set_filename(part_char, 'juice valuation')
        juice_eval_mini = open(complete, 'w')

        inputText = inputText + "\t" + part_char[1]

        juice_eval_mini.write(inputText)
        juice_eval_mini.close()
        print("Successfully saved the juice evaluation.")
        tmp_trial = 0
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
    TextComponent quest_prompt
      color = black
      text = How much do you think 100ml of juice is worth? (please write down the number in pence, e.g. for one pound, write down 100) 
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent continue_key
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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    TextComponent resp_box
      color = blue
      text [set every frame] = $(inputText)
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent juice_valuation
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine beg_fix
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        # deprecated
        #block_types = ['easy_low_pound', 'easy_high_pound', 'hard_low_pound', 'hard_high_pound', \
        #               'easy_low_juice', 'easy_high_juice', 'hard_low_juice', 'hard_high_juice']

        curr_t = random.gauss(0.5, 0.1)

        # just as a way of clipping the max size
        if curr_t < 0.25:
                curr_t = 0.25
        if curr_t > 0.75:
                curr_t = 0.75

        #fav_juice = 'apple'                 # comment out when done

        if reinforcer == 'primary':
            reward_type = fav_juice
            rew_pic = reward_size + "_" + fav_juice
        else:
            reward_type = 'pound'
            rew_pic = reward_size + "_" + reward_type


        diff_pic = gen_stim_path(difficulty + "_diff")
        block_type = reward_size + '_' + reward_type
        block_type = gen_stim_path(block_type)

        if difficulty == 'easy':
            cue_timing = 0.4
            resp_wind = mean(tmp_rt) + std(tmp_rt)*2

        elif difficulty == 'hard':
            cue_timing = 0.2
            resp_wind = mean(tmp_rt) + std(tmp_rt)*0.5

        if reward_size == 'high':
            if reinforcer == 'primary':
                amount = '\6'
                juice_nr = 0.6
            else:
                amount = 0.06

        else:
            if reinforcer == 'primary':
                amount = '\2'
                juice_nr = 0.2
            else:
                amount = 0.02

        feed_pic = gen_stim_path('empty')
      End Routine:
        # this should fetch the correct trial from the list on every trial. the added value of this approach is it will never be incorrecteven if skipping a loop
        trial, reinforcer, reward_size, difficulty, position, trial_type, stimulus, correct_resp = all_trials[go_trial-1] # because indexing



        main_cue = gen_stim_path(stimulus)
    ImageComponent image_7
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $block_type
      size = (0.35, 0.5)
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    TextComponent text_101
      text = Tutorial
      stopVal [duration (s)] = 1.5
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    PolygonComponent polygon_17
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      stopVal [duration (s)] = 1.5
      lineColor = $[1,-1,-1]
      lineWidth = 10
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    ImageComponent image_30
      stopVal [duration (s)] = 1.5
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      image [set every repeat] = $diff_pic
      size = (0.2, 0.25)
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  Routine transition
    CodeComponent code_24
      Code Type = Py
      Begin Routine:
        if run_matrix:
            # find appropriate t_values for our participant
            t_values = sorted(matrix_reason[participant_type][participant_age].values())

            # compute cumulative score from the matrix reasoning test

            f_r = '03'
            s_r = '02'
            t_r = '01'

            if f_r in stor_matrix_ans and stor_matrix_ans[f_r] == 1:        # means that it was a failure on item 4 already
                if s_r in stor_matrix_ans:
                    if stor_matrix_ans[s_r] == 1:                           # if this isn't true then '01' is already accounted for
                        ans_sum = str(sum(stor_matrix_ans.values()) + 1)
                    else:
                        ans_sum = str(sum(stor_matrix_ans.values()))

                else:                                                       # the only way item 3 is inside and item 2 isn't, is if the person
                    ans_sum = str(sum(stor_matrix_ans.values())) + 2        # reversed already on item 3, hence +2 for item 2 and 1

            elif f_r in stor_matrix_ans and stor_matrix_ans[f_r] != 1:      # here it necessarily goes to item 1 and thus you can
                ans_sum = str(sum(stor_matrix_ans.values()))                # just sum normally because all of them are inside

            elif f_r not in stor_matrix_ans:
                ans_sum = str(sum(stor_matrix_ans.values()) + 3)            # this necessarily means reverse wasnt entered so this is ok

        #    print("This is ans sum {} and this is stor matrix ans {}".format(ans_sum, stor_matrix_ans))

        ## if something goes wrong, here you can enter the participant type ('adult', 'child'), age (look for corresponding
        ## bracket in the beginning, and ans sum which is the number of correct answers in the matrix task as a string
        # participant_type =
        # participant_age =
        #    ans_sum = 25



            part_t = matrix_reason[participant_type][participant_age][ans_sum]

            t_modifier = 18                                                 # we arbitrarily pick a higher and lower t score value
            half_t = int(round(t_modifier/3))

            easiest = part_t - t_modifier
            easy = part_t - half_t                                          # the middle ones will be slightly below or above their performance
            medium = part_t + half_t
            high = part_t + t_modifier

            # exception handling | 80 is the max t values and 20 is the min t value
            if high > 80:
                high = 80

            if medium > 80:
                medium = 80

            if easy > 80:                   # if someone were to score all of them correct
                easy = 80

            if easiest > 80:                # if someone were to score all of them correct
                easiest = 80

            # not very probable that someone would score so low
            if easiest < 20:
                easiest = 20

            if easy < 20:
                easy = 20

            if medium < 20:
                medium = 20

            if high < 20:
                high = 20

            # we also want to make sure that none have the same t value
            # though this doesn't necessarily matter because they will only be exposed to 2 trials.

            all_t = [easiest, easy, medium, high]

            combos = list(itertools.combinations(all_t, 2))

            tmp_ctr = 0

        #    for t1, t2 in combos:

        #        if t1 == t2:


        #    tmp_ctr += 1


            # now we find the t value that corresponds and/or is closest to the newly obtained modifier

            easiest = min(enumerate(t_values), key=lambda i: abs(i[1]-easiest))[1]
            easy = min(enumerate(t_values), key=lambda i: abs(i[1]-easy))[1]
            medium = min(enumerate(t_values), key=lambda i: abs(i[1]-medium))[1]
            high = min(enumerate(t_values), key=lambda i: abs(i[1]-high))[1]


            elems = [easiest, easy, medium, high]


            for key, value in matrix_reason[participant_type][participant_age].items():
                for indx, el in enumerate(elems):
                    if value == el:
                        elems[indx] = key

        #        if value == high:
        #            high = key
        #        if value == easy:
        #            easy = key
        #        if value == easiest:
        #            easiest == key
        #        if value == medium:
        #            medium = key

            # they are now saved as the number of correct items which will correspond to the
            # row they are being pulled for presentation This is only approximate because
            # obviously someone can have 1 incorrect and two further ones correct.

            # we now convert them to index numbers, to all of them we need to add +1 because we are using the generated stim list
            # to actually present the pictures. So it goes from 0 to 31, with 0 and 1 being sample items A and B

            for indx, el in enumerate(elems):
                elems[indx] = int(el) + 1

            # these are the index values of items that we want to pick.

        else:
            part_t = ''
            t = ''
            ans_sum = ''
            tmp_list = []
            elems = [15, 21, 24, 30]    #
      End Routine:
        if run_matrix:
            # complete path
            complete = set_filename(part_char, 'matrix_reasoning')

            # current file
            matrix_data = open(complete, 'w')

            struct_1 = ''
            struct_2 = ''

            for i in range(1, 31):
                struct_1 +=  "item_" + str(i) + "\t"
                struct_2 += "{}\t"

            struct_1 += "sub_id\n"
            struct_2 += "{}\n"

            matrix_data.write(struct_1)


            # take the length of the actual responses
            sma_len = len(stor_matrix_ans.keys())

            tmp_keys = sma_len*[None]

            # populate it with the index values of the tmp_list where 0s should be theoretically
            # substituted with the real responses
            for i in range(0, sma_len):
                tmp_keys[i] = (int(stor_matrix_ans.keys()[i]) - 1) # we reduce it by one and transform it
                                                                     # into an index

            for el in tmp_keys:
                key_el = el + 1 # transform back into key
                if key_el < 10:
                    key_el = '0' + str(key_el)
                else:
                    key_el = str(key_el)

                tmp_list[el] = stor_matrix_ans[key_el]

            tmp_list.append(part_char[1]) # sub_id

            matrix_data.write(struct_2.format(tmp_list[0], tmp_list[1],tmp_list[2], tmp_list[3],
                                                  tmp_list[4], tmp_list[5],tmp_list[6], tmp_list[7],
                                                  tmp_list[8], tmp_list[9],tmp_list[10], tmp_list[11],
                                                  tmp_list[12], tmp_list[13],tmp_list[14], tmp_list[15],
                                                  tmp_list[16], tmp_list[17],tmp_list[18], tmp_list[19],
                                                  tmp_list[20], tmp_list[21],tmp_list[22], tmp_list[23],
                                                  tmp_list[24], tmp_list[25],tmp_list[26], tmp_list[27],
                                                  tmp_list[28], tmp_list[29],tmp_list[30]))



            matrix_data.close()
            print("Successfully saved the matrix reasoning dataset.")
            # clear variables
            struct_1 = ''
            struct_2 = ''
            tmp_list = []

            tmp_runner = 1
    TextComponent text_54
      color = black
      text = Great job! We would now like you to answer a number of questions!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_66
      text [set every repeat] = $part_t
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_67
      text [set every repeat] = $t
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_68
      text [set every repeat] = $ans_sum
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_69
      color = black
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine eff_expl4
    CodeComponent code_33
      Code Type = Py
      End Routine:
        run_eff_instr = 0
        trials_4.finished = True

        win.mouseVisible = False
    TextComponent text_77
      text = You will see both the picture type and reward:
      stopVal [duration (s)] = 5
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_16
      color = $[1, 1, 1]
      pos = (0.0, 0.0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $diff_pic
      size = (0.2,0.35)
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent text_83
      text = Press SPACE to continue.
      pos = (0, -0.8)
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_95
      text = Tutorial
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    PolygonComponent polygon_13
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      lineColor = $[1, -1, -1]
      lineWidth = 10
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    ImageComponent image_18
      color = $[1, 1, 1]
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      image [set every repeat] = $rew_pic
      size = (0.4, 0.5)
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    TextComponent text_28
      text = And will choose between playing it out or not:
      pos = (0, -0.2)
      startVal [time (s)] = 5
      letterHeight = 0.1
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    TextComponent text_62
      text = Yes
      pos = (0.2, -0.4)
      startVal [time (s)] = 5
      letterHeight = 0.1
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    TextComponent text_63
      text = No
      pos = (-0.2, -0.4)
      startVal [time (s)] = 5
      letterHeight = 0.1
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  Routine nfc_scale
    CodeComponent code_40
      Code Type = Py
      Begin Routine:
        nfc_question = current_question
      End Routine:
        stor_nfc_q.append([sav_mapping, rating_4.getRating()])

        nfc_trial += 1
        row_len = 18

        if nfc_trial == row_len: # end of questions about nasa

            complete = set_filename(part_char, 'nfc(nfc.csv)')
            nfc_q = open(complete, 'w')

            stor_nfc_q = sorted(stor_nfc_q, key=lambda x: x[0])

            for el1, el2 in stor_nfc_q:
                struct_1 += "nfc_" + str(el1) + "\t"

            struct_1 += "sub_id\n"  #subid

            nfc_q.write(struct_1)

            for i in range(0, len(stor_nfc_q)):
                struct_2 += "{}\t"
            struct_2 += "{}\n"

            tmp_list = [el2 for el1, el2 in stor_nfc_q]
            tmp_list.append(sub_id)

            nfc_q.write(struct_2.format(tmp_list[0], tmp_list[1], tmp_list[2], tmp_list[3],
                                        tmp_list[4], tmp_list[5], tmp_list[6], tmp_list[7],
                                        tmp_list[8], tmp_list[9], tmp_list[10], tmp_list[11],
                                        tmp_list[12], tmp_list[13], tmp_list[14], tmp_list[15],
                                        tmp_list[16], tmp_list[17], tmp_list[18]))

            nfc_q.close()

            print("Successfully saved the NFC dataset.")

            struct_1 = ''
            struct_2 = ''
            tmp_list = []
    TextComponent nfc_scale_text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $nfc_question
    RatingScaleComponent rating_4
      pos = 0, -0.4
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
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      customize_everything:
        size = 0.8,
        lineColor = 'black',
        stretch = 1.4,
        textColor = "black",
        scale = None,
        low = 1,
        high = 5,
        labels = ['extremely uncharacteristic of me', 'uncertain', 'extremely characteristic of me']
  Routine water_disp
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if juice_trial == 4:
            if gust_connected:
                dev.write('\4')
            run_dispenser = 1
            juice_trial = 1
            t1 = 0.5
            t2 = 7.5 #should be 10
            col = 'black'

        if len(tmp_list) == 9:
            t1 = 0
            t2 = 0.01
            col = 'white'
            tmp_list = []
      End Routine:
        if gust_connected:
            dev.readlines() # needs to be cleared
    TextComponent prompt_next
      color [set every repeat] = $col
      text = Get ready for the next one!
      stopVal [time (s)] = $t2
      startVal [time (s)] = $t1
      letterHeight = 0.2
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  Routine jui_inf
    ImageComponent image_21
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $fav_juice_path
      size = (0.15, 0.6)
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  Routine go_expl
    CodeComponent code_35
      Code Type = Py
      Begin Routine:
        imgs_upper = ["steven", \
                      "steven", \
                      "empty", \
                      "empty", \
                      "steven_l", \
                      "steven_l", \
                      "steven_con", \
                      "steven_con", \
                       "empty", \
                       "empty", \
                       "juice", \
                       "juice", \
                       "empty", \
                       "empty", \
                       "hard_diff", \
                       "hard_diff", \
                       "empty", \
                       "empty", \
                       "5_drops", \
                       "empty", \
                        "empty"]



        imgs_lower = ["empty", \
                      "empty", \
                      "empty", \
                      "steven_r", \
                      "empty", \
                      "steven_r", \
                      "empty", \
                      "steven_con", \
                      "empty", \
                      "steven_no", \
                      "empty", \
                      "empty", \
                      "empty", \
                      "empty", \
                      "empty", \
                      "easy_diff", \
                      "empty",  \
                      "empty", \
                      "1_drops", \
                      "empty", \
                      "empty"]

        size_u = [(0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.18, 0.06), \
                (0.18, 0.06), \
                (0.18, 0.06), \
                (0.18, 0.06), \
                (0.35, 0.5), \
                (0.35, 0.5), \
                (0.2, 0.3), \
                (0.2, 0.3), \
                (0.2, 0.3), \
                (0.2, 0.3), \
                (0.3, 0.5), \
                (0.3, 0.5), \
                (0.3, 0.5), \
                (0.2, 0.2), \
                (0.2, 0.2)]

        size_l = [(0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.18, 0.06), \
                (0.18, 0.06), \
                (0.18, 0.06), \
                (0.18, 0.06), \
                (0.2, 0.2), \
                (0.35, 0.5), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.2, 0.3), \
                (0.2, 0.2), \
                (0.2, 0.2), \
                (0.3, 0.5), \
                (0.2, 0.2), \
                (0.2, 0.2)]

        #fav_juice = 'apple'         # comment out when done

        if reinforcer == 'primary':
            imgs_upper[10] = 'juice'
            imgs_upper[11] = 'juice'
            imgs_upper[18] = '5_drops_' + fav_juice
            imgs_lower[18] = '1_drops_' + fav_juice

        else:
            imgs_upper[10] = 'pound'
            imgs_upper[11] = 'pound'
            imgs_upper[18] = '5_pounds'
            imgs_lower[18] = '1_pounds'


        texts_upper = ["Meet Steven!", \
                       "Meet Steven!", \

                       "You will have to help Steven find the direction of the food.", \
                       "You will have to help Steven find the direction of the food.", \

                      "If you see Steven with the arrow in this direction, then you need to press 'f' on the keyboard as quickly as possible.", \
                      "If you see Steven with the arrow in this direction, then you need to press 'f' on the keyboard as quickly as possible.", \

                      "Steven will always be accompanied by friends: ", \
                      "Steven will always be accompanied by friends: ", \

                      "It is important that you always pay attention only to Steven (in the middle) and not to his friends. So, you have to focus on Steven!", \
                      "It is important that you always pay attention only to Steven (in the middle) and not to his friends. So, you have to focus on Steven!", \

                      "You will receive the reward you were told about before: ", \
                      "You will receive the reward you were told about before: ", \

                      "This means, the more often you will be correct, the more rewards you will get!", \
                      "This means, the more often you will be correct, the more rewards you will get!", \

                      "One last thing is that sometimes you will see Steven only briefly. If that happens, you will see the yellow clock: ", \
                      "One last thing is that sometimes you will see Steven only briefly. If that happens, you will see the yellow clock: ", \

                      "When you will see him briefly, you will need to be extra quick with your response!", \
                       "", \
                      "Sometimes, Steven will be able to give you a lot of reward if you will be correct: ", \

                      "Let's do some practice now!"]


        texts_lower = ["", \
                       "Steven is hungry and wants to eat.", \
                       "", \
                      "To make it easier for you, Steven has been equipped with an arrow that will show you where the food is.",
                      "", \
                      "If you see him going in this direction, you need to press 'k', again as quickly as possible.", \
                      "", \
                      "His friends will always be facing the same direction: ", \
                      "", \
                      "Sometimes, it will happen that there is no food, so you should not press anything!", \
                      "", \
                      "If you do the correct thing (pressing 'f' or 'k' when we know where the food is and not pressing anything when we do not!)", \
                      "", \
                      "", \
                      "", \
                      "If you will see him for a longer time, you will see the green clock: ", \
                      "", \
                      "", \
                      "Sometimes, he will only be able to give you a little reward, if you are correct.", \
                      "", ""]

        curr_upp = texts_upper[go_instr_trial - 1]
        curr_low = texts_lower[go_instr_trial - 1]
        curr_upp_img = gen_stim_path(imgs_upper[go_instr_trial - 1])
        curr_low_img = gen_stim_path(imgs_lower[go_instr_trial - 1])

        curr_size_l = size_l[go_instr_trial - 1]
        curr_size_u = size_u[go_instr_trial - 1]

        lh, tutorial_opac = turn_on_tutorial()
      End Routine:
        go_instr_trial, run_go_instr = stop_instructions(go_instr_trial, texts_upper, run_go_instr)

        if not run_go_instr:
            continueRoutine = False
            trials_5.finished = True
            run_pr = 1
    TextComponent text_low
      text [set every repeat] = $curr_low
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_85
      text = Press SPACE to continue!
      pos = (0, -0.9)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent text_upp
      text [set every repeat] = $curr_upp
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_upp
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_upp_img
      size [set every repeat] = $curr_size_u
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    ImageComponent image_low
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_low_img
      size [set every repeat] = $curr_size_l
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    TextComponent text_100
      text = Tutorial
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    PolygonComponent polygon_16
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      lineColor = $[1,-1,-1]
      lineWidth = 10
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  Routine isi
    TextComponent text_108
      text = +
      stopVal [duration (s)] = $curr_t
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine eff_expl
    CodeComponent code_37
      Code Type = Py
      Begin Routine:
        texts_main = ['In the next game we want you to make a number of choices.', \
                      'If you remember from early on in the experiment, we asked you to complete picture sequences: ', \
                      'You probably found some easy...', \
                      'For some you had to think a bit to get them right...', \
                      "For some you had to think but you weren't sure if you were correct...", \
                      'And for some you did not know the answer at all.', \
                      'The choices you will be making will be about having to play out similar picture sequences.', \
                      'You will be presented with a certain difficulty level denoted by the number of filled out quarters.', \
                      'So, the left shows a picture sequence that you found very easy.', \
                      'On the right, you see one that you found very hard.', \
                      'You will now be given several choices between either playing a shown picture sequence or not playing.', \
                      'Remember that the picture sequences will vary in difficulty level and that this is indicated by the filled out quarters.', \
                      'The computer will save all of your choices and then randomly select a few of them.', \
                      "Those that will be selected will be played out at the end of today's experiment!", \
                      "That means, if it will select a round where you decided to play it out...", \
                      "You will see a picture sequence towards the end of the experiment and will have to give us an answer.", \
                      "If it will select a round where you decided not to do it, you will not have to play and will not do anything.", \
                      "To make it more interesting, by opening a door and providing an answer...", \
                      "You will get a reward!", \
                      "If you will have to play a sequence in the end, there will always be a chance of you winning the reward.", \
                      "That means, even if you would get the answer wrong, you could perhaps get a reward! The computer lottery will determine if that will happen.", \
                      "However, if you answer correctly, you will certainly get the reward!"]

        curr_text = texts_main[eff_instr_trial - 1]

        if is_trial(eff_instr_trial, [2]):
            _, img_opac = turn_on_tutorial()
        else:
            _, img_opac = turn_off_tutorial()


        if is_trial(eff_instr_trial, [8, 9, 10]):
            _, diff_lev_opac = turn_on_tutorial()
        else:
            _, diff_lev_opac = turn_off_tutorial()


        lh, tutorial_opac = turn_on_tutorial()
      End Routine:
        eff_instr_trial, run_eff_instr = stop_instructions(eff_instr_trial, texts_main, run_eff_instr)

        if not run_eff_instr:
            continueRoutine = False
            trials_7.finished = True
            trials_4.finished = True
    TextComponent text_50
      text [set every repeat] = $curr_text
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent text_65
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    PolygonComponent polygon_10
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      lineColor = $[1,-1, -1]
      lineWidth = 10
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    TextComponent text_92
      text = Tutorial
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    ImageComponent image_29
      opacity [set every repeat] = $img_opac
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      image = stimuli/Item01-1.png
      size = (0.5, 0.4)
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    ImageComponent image_35
      opacity [set every repeat] = $diff_lev_opac
      color = $[1, 1, 1]
      pos = (-0.6, -0.2)
      startVal [time (s)] = 0.0
      image = stimuli/easiest.png
      size = (0.25, 0.3)
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    ImageComponent image_36
      opacity [set every repeat] = $diff_lev_opac
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stimuli/easy.png
      size = (0.25, 0.3)
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    ImageComponent image_37
      opacity [set every repeat] = $diff_lev_opac
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stimuli/medium.png
      size = (0.25, 0.3)
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    ImageComponent image_38
      opacity [set every repeat] = $diff_lev_opac
      pos = (0.6, -0.2)
      startVal [time (s)] = 0.0
      image = stimuli/hard.png
      size = (0.25, 0.3)
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  Routine mat_ev
    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        correct_answer = stim_corr_ans[matrix_trial-1]          # index with -1 because matrix trial initialised at 1
        curr_matrix = stim_list[matrix_trial-1]

        if matrix_trial <= 2:                                   # sample items in the beginning
            begin_blurb = 'Answer by pressing keys from 1 to 5. If you do not know the answer, press 6.'
        else:
            begin_blurb = ''

        if matrix_trial == 3:
            indx = 5                                            # present item 4 | first item for age > 9
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 4 and not initiate_reverse:        # if item 4 was correct, continue with 5
            indx = 6
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 4 and initiate_reverse:            # if item 4 was incorrect, go to item 3
            indx = 4
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 5 and not initiate_reverse:        # if item 5 was correct, go to item 6
            indx = 7
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 5 and initiate_reverse and indx == 4: # if item 3 was presented, go to item 2
            indx = 3
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 5 and initiate_reverse and indx == 6: # if item 5 was incorrect, go to item 4
            indx = 4
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 6 and not initiate_reverse:           # if item 6 was correct, go to item 7
            indx = 8
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 6 and reverse_corrected:              # if item 3 was presented and correct, reverse correct and go to item 5
            indx = 6                                               # this assumes that initiate_reverse has been turned off
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            reverse_corrected = 0
            failed_seq = 2

        elif matrix_trial == 6 and initiate_reverse and indx == 3: # if item 2 was presented and incorrect, go to item 1
            indx = 2
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 6 and initiate_reverse and indx == 4: # if item 3 was presented and incorrect, go to item 2
            indx = 3
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 7 and failed_seq == 2:                # if the reverse was corrected on trial 5 (by being incorrect on item 4 in the beginning and correct on 3, 2)
            indx = 7                                               # go to item 6
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            failed_seq = 2

        elif matrix_trial == 7 and not initiate_reverse:           # if item 6 was correct, go to item 7
            indx = 9
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 7 and initiate_reverse and indx == 3 and not reverse_corrected:    # if item 2 was incorrect, go to item 1
            indx = 2
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 7 and initiate_reverse and indx == 2:                              # if item 1 was presented go to item 5
            indx = 6
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            failed_seq = 1

        elif matrix_trial == 7 and reverse_corrected and indx == 2:                             # if item 1 was presented and they have reversed, go to item 5
            indx = 6
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            reverse_corrected = 0
            failed_seq = 1

        elif matrix_trial == 7 and reverse_corrected and indx == 3:                             # if item 2 was presented and the reverse was corrected, go to item 6
            indx = 7
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            reverse_corrected = 0
            failed_seq = 2

        elif matrix_trial == 8 and indx == 2:                                                   # if item 1 was presented, we just set the failed sequence at this stage
            failed_seq = 2

        elif matrix_trial >= 8:
            if failed_seq == 1:
                indx = matrix_trial - 1
            elif failed_seq == 2:
                indx = matrix_trial
            else:
                indx = matrix_trial + 2 # this is the correct difference between the matrix trial and the index acces element if thez were completly correct

            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)

        elif matrix_trial == 8 and reverse_corrected:                                          # this runs just for one possible scenario where we want to continue
            indx = 7                                                                           # with item 6 when we started the reverse after item 5 was incorrect
            curr_matrix, correct_answer = set_matrix(indx, stim_list, stim_corr_ans)
            reverse_corrected = 0
            failed_seq = 1


        if matrix_trial >= 4:

            diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                              "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                              str(curr_matrix) + ", turn off: " + str(turn_off) + "\n" + \
                              "response storage: " + str(tmp_evaluater)
        else:
            diagnostics_info = "m_trial: " + str(matrix_trial) + ", indx: " + str(indx) + "\n" + \
                              "curr_resp: " + str(responded_correctly) + ", storage: " + str(stor_matrix_ans) +  "\n" + \
                              str(curr_matrix) + ", turn off: " + str(turn_off)
      End Routine:
        chosen_item = item_resp.keys

        if item_resp.keys == '1':
            pos = (-0.488, -0.49)
        elif item_resp.keys == '2':
            pos = (-0.246, -0.49)
        elif item_resp.keys == '3':
            pos = (-0.01,  -0.49)
        elif item_resp.keys == '4':
            pos = (0.225, -0.49)
        elif item_resp.keys == '5':
            pos = (0.475, -0.49)
        elif item_resp.keys == '6':
            pos = (0, -0.49)

        if item_resp.keys == '6':
            opac = 0
        else:
            opac = 0.7
    ImageComponent image_3
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_matrix
      size = (1.5, 1.5)
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    KeyboardComponent item_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6'
      startVal [time (s)] = 0.0
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    TextComponent text_55
      wrapWidth = 1.4
      color = black
      text [set every repeat] = $begin_blurb
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent diagnostics_3
      opacity = 0
      color = black
      text [set every repeat] = $diagnostics_info
      pos = (0.4, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine eff_midway
    CodeComponent code_47
      Code Type = Py
      Begin Routine:
        if reinforcer_type == 1:
            minr, smallr, mediumr, larger, largerr, largestr = pounds

        else:
            minr, smallr, mediumr, larger, largerr, largestr = drops
    TextComponent text_99
      text = Now you will be choosing for:
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_27
      pos = (-0.6, 0.65)
      startVal [time (s)] = 0.0
      image [set every repeat] = $minr
      size = (0.25, 0.35)
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    ImageComponent image_28
      pos = (-0.4, 0.45)
      startVal [time (s)] = 0.0
      image [set every repeat] = $smallr
      size = (0.25, 0.35)
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    ImageComponent image_29r
      pos = (-0.2, 0.25)
      startVal [time (s)] = 0.0
      image [set every repeat] = $mediumr
      size = (0.25, 0.35)
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    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_105
      text = Press SPACE to continue.
      pos = (0, -0.9)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    ImageComponent image_39
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      image [set every repeat] = $larger
      size = (0.25, 0.35)
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    ImageComponent image_40
      pos = (0.2, -0.25)
      startVal [time (s)] = 0.0
      image [set every repeat] = $largerr
      size = (0.25, 0.35)
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    ImageComponent image_41
      pos = (0.5, -0.45)
      startVal [time (s)] = 0.0
      image [set every repeat] = $largestr
      size = (0.25, 0.35)
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  Routine comp
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        if  main_resp.keys == left_resp:
            part_resp = 1 # left
        elif main_resp.keys == right_resp:
            part_resp = 2 # right
        else: # no go trial
            part_resp = 3

        if correct_resp == 'f':
            correct_response = 1
        elif correct_resp == 'k':
            correct_response = 2
        else:
            correct_response = 3

        allowed_length = resp_wind

        # make sure this is correct
        # if participant does respond and was suppose to respond and responds correctly
        if ((part_resp == 1) and (correct_response == 1) and (main_resp.rt < allowed_length)) or \
            ((part_resp == 2) and (correct_response == 2) and (main_resp.rt < allowed_length)):
            computed_resp = 1 # hit

            if et_connected:
                controller.record_event('1 ' + str(go_trial)) # trigger for start of rew present for correct resp


        # if participant does respond and was supposed to respond and responds incorrectly
        elif ((part_resp == 1) and (correct_response == 2)) or \
            ((part_resp == 2) and (correct_response == 1)):
            computed_resp = 2 # incorrect response due to pressing incorrect key

        # if participant does respond and was not supposed to respond
        elif (part_resp == 1 or part_resp == 2) and (correct_response == 3):
            computed_resp = 3 # false alarm

        # if participant does not respond and was not supposed to respond
        elif (part_resp == 3) and (correct_response == 3) and not main_resp.rt: # this makes it sure that participants
            computed_resp = 0 # correct rejection                               # who press in a nogo dont get accounted as 0

            if et_connected:
                controller.record_event('2 ' + str(go_trial)) # trigger for start of rew present for correct omission

        # if participant does not respond and was supposed to respond
        elif (part_resp == 3) and (correct_response != 3):
            computed_resp = 4 # miss

        elif ((part_resp == 1) and (correct_response == 1) and (main_resp.rt > allowed_length)) or \
            ((part_resp == 2) and (correct_response == 2) and (main_resp.rt > allowed_length)):
                computed_resp = 5       # too slow

        if main_resp.rt and (computed_resp != 3):

            tmp_rt.append(main_resp.rt)

        if reinforcer == 'primary' and (computed_resp == 1 or computed_resp == 0):

            if gust_connected:
                dev.write(fav_juice_pumpid)
                core.wait(0.1)
                dev.write(amount)
                core.wait(0.1)
                dev.write(fav_juice_pump) # send juice squirt
                core.wait(0.1)

            cum_juice += juice_nr
            feed_pic = gen_stim_path(rew_pic)
            obtained_rew = str(cum_juice) + ' mL'

        elif reinforcer == 'secondary' and (computed_resp == 1 or computed_resp == 0):
            cum_amount += amount
            obtained_rew =  str(cum_amount) + ' pounds'
            feed_pic = gen_stim_path(rew_pic)


        elif computed_resp == 2 or \
             computed_resp == 3 or \
             computed_resp == 4 or \
             computed_resp == 5:

                vol = 0
        #        obtained_rew = 'Won: 0'
                feed_pic = gen_stim_path('empty')
      End Routine:
        if go_trial == go_pract and not go_switch:              # start running the main trials
            run_real = 1

        if reinforcer == 'primary':                             # get gustaf information
            if (computed_resp == 1) or (not computed_resp):
                core.wait(0.2)
                if gust_connected:
                    act_pump, act_pump_nr, act_vol = decode_gustaf(dev)
            else:
                act_pump, act_pump_nr, act_vol = 0, 0, 0

        # saving the data every trial
        stor_go = [go_trial, reinforcer, reward_size, difficulty, position, trial_type, computed_resp, main_resp.rt, cum_amount, cum_juice, sub_id, act_pump, act_vol, act_pump_nr]
        save_go(stor_go, go_f)

        if go_trial == halfway_go:                          # if we are done with the first half of the go
            run_rew, run_ev, run_effort, run_go = determine_sequence(type, 'go', 0)

            if et_connected:
                controller.record_event('finish_first_half ' + str(go_trial))

        elif go_trial == num_trials:
            run_rew, run_ev, run_effort, run_go = determine_sequence(type, 'go', 1)

            if et_connected:
                controller.record_event('finish_go ' + str(go_trial))
                controller.unsubscribe()
                controller.close_datafile()

        if go_trial == block_length:
            run_pause = 1
            block_length += block_length

            if et_connected:
                controller.record_event('finish_block_' + str(go_trial))


        if et_connected:
            if computed_resp == 1:
                controller.record_event('3 ' + str(go_trial))    # trigger for end of rew present for correct response
            elif computed_resp == 3:
                controller.record_event('4 ' + str(go_trial))    # trigger for end of rew present for correct omission


        go_trial += 1
    TextComponent text_86
      color = $[0, 0, 0]
      text [set every repeat] = $obtained_rew
      stopVal [duration (s)] = 1
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_22
      opacity = 0
      colorSpace = dkl
      color = $[90, 0, 1]
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      image [set every repeat] = $feed_pic
      size = (0.35, 0.5)
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    TextComponent text_103
      text = Tutorial
      stopVal [duration (s)] = 1
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    PolygonComponent polygon_19
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      stopVal [duration (s)] = 1
      lineColor = $[1,-1,-1]
      lineWidth = 10
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  Routine ev_prom
    KeyboardComponent ev_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6'
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        curr_q = current_question

        # this is added because by having an id of the question
        # where the questions are randomised, we can simply store it
        # later
        q_id = sav_mapping

        lh, tutorial_opac = turn_off_tutorial()
    TextComponent text_5
      wrapWidth = 0.8
      text [set every repeat] = $current_question
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent first
      pos = [-0.8, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent second
      pos = [-0.5, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0, 0, 0]
      lineWidth = 10
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    PolygonComponent third
      pos = [-0.2, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0, 0, 0]
      lineWidth = 10
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    PolygonComponent fourth
      pos = [0.1, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent fifth
      pos = [0.4, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0,0,0]
      lineWidth = 10
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    PolygonComponent sixth
      pos = [0.7, -0.6]
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
      fillColor = $[0.2, 0.2, 0.2]
      lineColor = $[0, 0, 0]
      lineWidth = 10
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    TextComponent text_12
      text = 1
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_13
      text = 2
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_14
      text = 3
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_15
      text = 4
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_16
      text = 5
      pos = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_47
      text = 6
      pos = [0.7, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    ImageComponent image_17
      color = $[1, 1, 1]
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_reward
      size = (0.35, 0.5)
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  Routine cog_eff_fin
    CodeComponent code_49
      Code Type = Py
      Begin Routine:
        if et_connected:
            controller.record_event('5')
    ImageComponent image_24
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $fin_pic
      size = (1.5, 1.5)
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    KeyboardComponent cog_eff_fin_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6'
      startVal [time (s)] = 0.0
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  Routine eff_expl2
    CodeComponent code_30
      Code Type = Py
      Begin Routine:
        ################################################################################################
        ################################# effort (design matrix) #######################################
        ################################################################################################
        #fav_juice = 'apple'            # comment out when doin git for real

        drops = ["1_drops_", "2_drops_", "3_drops_", "4_drops_", "5_drops_", "6_drops_"]
        pounds = ["1_pounds", "2_pounds", "3_pounds", "4_pounds", "5_pounds", "6_pounds"]

        diff_levels = ['easiest', 'easy', 'medium', 'hard']

        for id, el in enumerate(diff_levels):
            diff_levels[id] = gen_stim_path(el)

        design_matrix = []

        design_matrix_2 = []

        if reinforcer_type == 1:

            for id, el in enumerate(drops):
                drops[id] = gen_stim_path(el + fav_juice)
            minr, smallr, mediumr, larger, largerr, largestr = drops
            rewards = drops

            for i in range(0, 3): # we want 3x the same trials
                for rew in rewards:
                    for diff in diff_levels:
                        design_matrix.append([diff, rew])

            opt = design_matrix[0]

            rew_pic = opt[1]
            diff_pic = opt[0]

            for id, el in enumerate(pounds):
                pounds[id] = gen_stim_path(el)
            rewards = pounds

            for i in range(0, 3): # we want 3x the same trials
                for rew in rewards:
                    for diff in diff_levels:
                        design_matrix_2.append([diff, rew])

        else:
            for id, el in enumerate(pounds):
                pounds[id] = gen_stim_path(el)
            minr, smallr, mediumr, larger, largerr, largestr = pounds
            rewards = pounds

            for i in range(0, 3): # we want 3x the same trials
                for rew in rewards:
                    for diff in diff_levels:
                        design_matrix.append([diff, rew])

            opt = design_matrix[0]

            rew_pic = opt[1]
            diff_pic = opt[0]

            for id, el in enumerate(drops):
                drops[id] = gen_stim_path(el + fav_juice)
            rewards = drops

            for i in range(0, 3): # we want 3x the same trials
                for rew in rewards:
                    for diff in diff_levels:
                        design_matrix_2.append([diff, rew])


        tmp_design_matrix = deepcopy(design_matrix)
        random.shuffle(tmp_design_matrix)
    TextComponent text_70
      text = The size of the reward will change:
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_8
      color = $[1, 1, 1]
      pos = (-0.6, 0.65)
      startVal [time (s)] = 0.0
      image [set every repeat] = $minr
      size = (0.25, 0.35)
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    ImageComponent image_9
      color = $[1, 1, 1]
      pos = (-0.4, 0.45)
      startVal [time (s)] = 0.0
      image [set every repeat] = $smallr
      size = (0.25, 0.35)
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    ImageComponent image_10
      color = $[1, 1, 1]
      pos = (-0.2, 0.25)
      startVal [time (s)] = 0.0
      image [set every repeat] = $mediumr
      size = (0.25, 0.35)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent text_71
      text = Press SPACE to continue!
      pos = (0, -0.8)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent text_93
      text = Tutorial
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $lh
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    PolygonComponent polygon_11
      pos = (-0.8, 0.8)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.25, 0.15)
      fillColor = None
      opacity [set every repeat] = $tutorial_opac
      lineColor = $[1,-1,-1]
      lineWidth = 10
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    ImageComponent image_26
      color = $[1, 1, 1]
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      image [set every repeat] = $larger
      size = (0.25, 0.35)
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    ImageComponent image_33
      color = $[1, 1, 1]
      pos = (0.2, -0.25)
      startVal [time (s)] = 0.0
      image [set every repeat] = $largerr
      size = (0.25, 0.35)
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    ImageComponent image_34
      color = $[1, 1, 1]
      pos = (0.5, -0.45)
      startVal [time (s)] = 0.0
      image [set every repeat] = $largestr
      size = (0.25, 0.35)
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Flow
  Routine instr1
  LoopInitiator trials_6 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = $run_begin_instr
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    Routine instr2
  LoopTerminator trials_6
  LoopInitiator first_loop loopType="TrialHandler"
    loopType = random
    nReps = $run_debug
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    Routine part1
    LoopInitiator mat_tr loopType="TrialHandler"
      conditionsFile = m_reason.csv
      isTrials = False
      loopType = random
      nReps = $run_matrix
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      conditions:
        [{'item': u'stimuli/Sample Item A-1.png', 'corr_answ': 2},
        {'item': u'stimuli/Sample Item B-1.png', 'corr_answ': 3},
        {'item': u'stimuli/Item01-1.png', 'corr_answ': 2},
        {'item': u'stimuli/Item02-1.png', 'corr_answ': 1},
        {'item': u'stimuli/Item03-1.png', 'corr_answ': 3},
        {'item': u'stimuli/Item04-1.png', 'corr_answ': 1},
        {'item': u'stimuli/Item05-1.png', 'corr_answ': 5},
        {'item': u'stimuli/Item06-1.png', 'corr_answ': 1},
        {'item': u'stimuli/Item07-1.png', 'corr_answ': 3},
        {'item': u'stimuli/Item08-1.png', 'corr_answ': 3},
        {'item': u'stimuli/Item09-1.png', 'corr_answ': 4},
        {'item': u'stimuli/Item10-1.png', 'corr_answ': 2},
        {'item': u'stimuli/Item11-1.png', 'corr_answ': 3},
        {'item': u'stimuli/Item12-1.png', 'corr_answ': 4},
        {'item': u'stimuli/Item13-1.png', 'corr_answ': 1},
        {'item': u'stimuli/Item14-1.png', 'corr_answ': 4},
        {'item': u'stimuli/Item15-1.png', 'corr_answ': 2},
        {'item': u'stimuli/Item16-1.png', 'corr_answ': 5},
        {'item': u'stimuli/Item17-1.png', 'corr_answ': 4},
        {'item': u'stimuli/Item18-1.png', 'corr_answ': 2},
        {'item': u'stimuli/Item19-1.png', 'corr_answ': 4},
        {'item': u'stimuli/Item20-1.png', 'corr_answ': 2},
        {'item': u'stimuli/Item21-1.png', 'corr_answ': 3},
        {'item': u'stimuli/Item22-1.png', 'corr_answ': 3},
        {'item': u'stimuli/Item23-1.png', 'corr_answ': 1},
        {'item': u'stimuli/Item24-1.png', 'corr_answ': 4},
        {'item': u'stimuli/Item25-1.png', 'corr_answ': 4},
        {'item': u'stimuli/Item26-1.png', 'corr_answ': 2},
        {'item': u'stimuli/Item27-1.png', 'corr_answ': 5},
        {'item': u'stimuli/Item28-1.png', 'corr_answ': 5}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
      Routine mat_ev
      Routine mat_ans
      LoopInitiator matrix_re loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = $run_correct
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        Routine mat_re
      LoopTerminator matrix_re
    LoopTerminator mat_tr
    Routine transition
    LoopInitiator init_qs loopType="TrialHandler"
      conditionsFile = initial_q.csv
      isTrials = False
      loopType = random
      nReps = 1
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      Routine ev_iniq
    LoopTerminator init_qs
    LoopInitiator trial_pic_eval loopType="TrialHandler"
      conditionsFile = pic_rating.csv
      isTrials = False
      loopType = random
      nReps = $run_pic_eval_b
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      Routine ev_pic
    LoopTerminator trial_pic_eval
    LoopInitiator trials_9 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = $run_est_sal
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      Routine est_sal
    LoopTerminator trials_9
    LoopInitiator jui_typ loopType="TrialHandler"
      conditionsFile = juice_types.csv
      isTrials = False
      loopType = random
      nReps = 1
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      LoopInitiator jui_sal loopType="TrialHandler"
        conditionsFile = juice_salience.csv
        isTrials = False
        loopType = random
        nReps = 1
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        LoopInitiator disp loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = $run_dispenser
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          Routine jui_warn
          Routine supl_jui
        LoopTerminator disp
        Routine ev_jui
        Routine jui_fe
        LoopInitiator disp_c loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = $run_water
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          Routine wat_warn
          Routine water_disp
        LoopTerminator disp_c
      LoopTerminator jui_sal
    LoopTerminator jui_typ
    Routine jui_out
    LoopInitiator juice_re loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = $run_juice_reeval
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      Routine jui_re
      Routine jui_inf
    LoopTerminator juice_re
  LoopTerminator first_loop
  Routine transition2
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = $participant_file
    loopType = sequential
    nReps = $run_all
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    LoopInitiator rew_role loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = $run_rew
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      LoopInitiator trials_2 loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = $run_rew_instr
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        Routine rew_expl
      LoopTerminator trials_2
      Routine rew_ann
    LoopTerminator rew_role
    LoopInitiator ev_role loopType="TrialHandler"
      loopType = random
      nReps = $run_ev
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      LoopInitiator ev_loop loopType="TrialHandler"
        conditionsFile = ev.csv
        isTrials = False
        loopType = random
        nReps = 1
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        conditions:
          [{'current_question': u'firstq'},
          {'current_question': u'secondq'},
          {'current_question': u'thirdq'},
          {'current_question': u'fourthq'}]
        LoopInitiator trials_3 loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = $run_ev_instr
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          Routine ev_expl
        LoopTerminator trials_3
        Routine ev_prom
        Routine ev_feed
      LoopTerminator ev_loop
      Routine ev_save
    LoopTerminator ev_role
    LoopInitiator effort_role loopType="TrialHandler"
      loopType = sequential
      nReps = $run_effort
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      LoopInitiator trials_4 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = $run_eff_instr
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        LoopInitiator trials_7 loopType="TrialHandler"
          isTrials = False
          loopType = sequential
          nReps = $run_eff_instr
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          Routine eff_expl
        LoopTerminator trials_7
        Routine eff_expl2
        Routine eff_expl4
        Routine eff_practice
      LoopTerminator trials_4
      LoopInitiator effort_midway loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = $run_effort_midway
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        Routine eff_midway
      LoopTerminator effort_midway
      LoopInitiator real_info loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = $run_real
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        Routine real_ann
      LoopTerminator real_info
      Routine eff_press
      Routine eff_feed
    LoopTerminator effort_role
    LoopInitiator trials_12 loopType="TrialHandler"
      loopType = random
      nReps = $run_transition
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      Routine transition3
    LoopTerminator trials_12
    LoopInitiator go_role loopType="TrialHandler"
      loopType = random
      nReps = $run_go
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      LoopInitiator trials_5 loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = $run_go_instr
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        Routine go_expl
        LoopInitiator trials_8 loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = $run_pr
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          Routine go_expl3
        LoopTerminator trials_8
      LoopTerminator trials_5
      LoopInitiator trials loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = $run_real
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        Routine real_go_ann
      LoopTerminator trials
      LoopInitiator trials_11 loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = $run_pause
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        Routine pause
      LoopTerminator trials_11
      Routine beg_fix
      Routine isi
      Routine tar_ann
      Routine comp
    LoopTerminator go_role
  LoopTerminator main_loop
  LoopInitiator trials_10 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = $run_cog_eff_instr
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    Routine cog_eff_instr
  LoopTerminator trials_10
  Routine calibration
  LoopInitiator trials_13 loopType="TrialHandler"
    loopType = random
    nReps = $run_fin_eff
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    Routine cog_eff_fin_select
    LoopInitiator cog_eff_final_data loopType="TrialHandler"
      loopType = random
      nReps = $run_fin_eff_tr
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      Routine cog_eff_fin
      Routine cog_eff_fin_answ
    LoopTerminator cog_eff_final_data
    LoopInitiator nasa_trials loopType="TrialHandler"
      conditionsFile = nasa_tlx.csv
      loopType = random
      nReps = $run_nasa
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      Routine nasa_tlx
    LoopTerminator nasa_trials
  LoopTerminator trials_13
  Routine juice_eval
  LoopInitiator final_pic_eval_trials loopType="TrialHandler"
    conditionsFile = pic_rating.csv
    loopType = random
    nReps = $run_pic_eval_e
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    Routine ev_pic
  LoopTerminator final_pic_eval_trials
  LoopInitiator nfc_trials loopType="TrialHandler"
    conditionsFile = nfc.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'current_question': u'I prefer complex to simple problems.', 'sav_mapping': 1},
      {'current_question': u'I like to have the responsibilit zof handling a situation that requires a lot of thinking.', 'sav_mapping': 2},
      {'current_question': u'Thinking is not my idea of fun.', 'sav_mapping': 3},
      {'current_question': u'I would rather do something that requires little thought than something that is sure to challenge my thinkin gabilities.', 'sav_mapping': 4},
      {'current_question': u'I try to anticipate and avoid situations where there is a likely chance I will have to think in depth about something.', 'sav_mapping': 5},
      {'current_question': u'I find satisfaction in deliberating hard and for long hours.', 'sav_mapping': 6},
      {'current_question': u'I only think as hard as I have to.', 'sav_mapping': 7},
      {'current_question': u'I prefer to think about small daily projects to long term ones.', 'sav_mapping': 8},
      {'current_question': u"I like tasks that require little thought once I've learned them", 'sav_mapping': 9},
      {'current_question': u'The idea of relying on thuoght to make my way to the top appeals to me.', 'sav_mapping': 10},
      {'current_question': u'I really enjoy a task that involves coming up with new solutions to problems.', 'sav_mapping': 11},
      {'current_question': u"Learning new ways to think doesn't excite me very much.", 'sav_mapping': 12},
      {'current_question': u'I prefer my life to be filled with puyyles I must solve.', 'sav_mapping': 13}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
    Routine nfc_scale
  LoopTerminator nfc_trials
  Routine final_screen
